//  ******************************************************
// 
//     File generated by: neuroConstruct v1.7.0
// 
//  ******************************************************

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}

//  Initialising stopwatch for timing setup

{startsw()}

print ""
print "*****************************************************"
print ""
print "    neuroConstruct generated NEURON simulation "
print "    for project: C:\Users\Tom\Documents\research\OpenWorm\CElegansNeuroConstruct\CElegansNeuroML\CElegans\CElegans.ncx "
print ""
print "    Description: This is a neuroConstruct project incorporating reconstructed CElegans cells (originally in Blender format).  "
print "     "
print "    The default simulation configuration will generate the 302 cells in the correct relative positions, with a subset of the known connections (manually added by Tim Busbice)"
print "    "
print "    The sim config CellsOnly will generate just the 302 cells. This is quicker to generate and visualise."
print "    "
print "    The sim config ConnectionsFromSpreadsheet contains 3600+ network connections imported from "
print "    CElegansNeuronTables.xls"
print "    "
print "    PharyngealNeurons will just generate a network with the 20 neurons in the pharynx, along with the connections between them."
print ""
print "    Simulation Configuration: SimConfig: PharyngealNeurons_inputs "
print "    Generates a subset of the CElegans neural system consisting of just the Pharyngeal Neurons of the alimentary system. See http://www.wormatlas.org/hermaphrodite/pharynx/jump.html?newLink=mainframe.htm&newAnchor=Pharyngealneurons7 "
print " "
print  "*****************************************************"

objectvar allCells
{allCells = new List()}


//  A flag to signal simulation was generated by neuroConstruct 

{nC = 1}


//  Including neuroConstruct utilities file 

{load_file("nCtools.hoc")}

//  Including neuroConstruct cell check file 

{load_file("cellCheck.hoc")}

//  Simulation running in serial mode, setting default host id

{hostid = 0}


//  Initializes random-number generator

{use_mcell_ran4(1)}

{mcell_ran4_init(1303016698)}





















































































































//////////////////////////////////////////////////////////////////////
//   Cell group 117: I1L has cells of type: I1L
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I1L.hoc for cell group I1L

{ load_file("I1L.hoc") }

//  Adding 1 cells of type I1L in region WormBody

{n_I1L = 1}

{n_I1L_local = 0 } // actual number created on this host

objectvar a_I1L[n_I1L]

proc addCell_I1L() {
    strdef reference
    sprint(reference, "I1L_%d", $1)
    a_I1L[$1] = new I1L(reference, "I1L", "         Interneuron       ")
    allCells.append(a_I1L[$1])
}

for i = 0, n_I1L-1 {
    addCell_I1L(i)
    n_I1L_local = n_I1L_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I1L[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 118: I1R has cells of type: I1R
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I1R.hoc for cell group I1R

{ load_file("I1R.hoc") }

//  Adding 1 cells of type I1R in region WormBody

{n_I1R = 1}

{n_I1R_local = 0 } // actual number created on this host

objectvar a_I1R[n_I1R]

proc addCell_I1R() {
    strdef reference
    sprint(reference, "I1R_%d", $1)
    a_I1R[$1] = new I1R(reference, "I1R", "         Interneuron       ")
    allCells.append(a_I1R[$1])
}

for i = 0, n_I1R-1 {
    addCell_I1R(i)
    n_I1R_local = n_I1R_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I1R[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 119: I2L has cells of type: I2L
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I2L.hoc for cell group I2L

{ load_file("I2L.hoc") }

//  Adding 1 cells of type I2L in region WormBody

{n_I2L = 1}

{n_I2L_local = 0 } // actual number created on this host

objectvar a_I2L[n_I2L]

proc addCell_I2L() {
    strdef reference
    sprint(reference, "I2L_%d", $1)
    a_I2L[$1] = new I2L(reference, "I2L", "         Interneuron       ")
    allCells.append(a_I2L[$1])
}

for i = 0, n_I2L-1 {
    addCell_I2L(i)
    n_I2L_local = n_I2L_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I2L[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 120: I2R has cells of type: I2R
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I2R.hoc for cell group I2R

{ load_file("I2R.hoc") }

//  Adding 1 cells of type I2R in region WormBody

{n_I2R = 1}

{n_I2R_local = 0 } // actual number created on this host

objectvar a_I2R[n_I2R]

proc addCell_I2R() {
    strdef reference
    sprint(reference, "I2R_%d", $1)
    a_I2R[$1] = new I2R(reference, "I2R", "         Interneuron       ")
    allCells.append(a_I2R[$1])
}

for i = 0, n_I2R-1 {
    addCell_I2R(i)
    n_I2R_local = n_I2R_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I2R[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 121: I3 has cells of type: I3
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I3.hoc for cell group I3

{ load_file("I3.hoc") }

//  Adding 1 cells of type I3 in region WormBody

{n_I3 = 1}

{n_I3_local = 0 } // actual number created on this host

objectvar a_I3[n_I3]

proc addCell_I3() {
    strdef reference
    sprint(reference, "I3_%d", $1)
    a_I3[$1] = new I3(reference, "I3", "         Interneuron       ")
    allCells.append(a_I3[$1])
}

for i = 0, n_I3-1 {
    addCell_I3(i)
    n_I3_local = n_I3_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I3[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 122: I4 has cells of type: I4
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I4.hoc for cell group I4

{ load_file("I4.hoc") }

//  Adding 1 cells of type I4 in region WormBody

{n_I4 = 1}

{n_I4_local = 0 } // actual number created on this host

objectvar a_I4[n_I4]

proc addCell_I4() {
    strdef reference
    sprint(reference, "I4_%d", $1)
    a_I4[$1] = new I4(reference, "I4", "         Interneuron       ")
    allCells.append(a_I4[$1])
}

for i = 0, n_I4-1 {
    addCell_I4(i)
    n_I4_local = n_I4_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I4[0].position(0.0,0.0,0.0)}













//////////////////////////////////////////////////////////////////////
//   Cell group 135: M2L has cells of type: M2L
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M2L.hoc for cell group M2L

{ load_file("M2L.hoc") }

//  Adding 1 cells of type M2L in region WormBody

{n_M2L = 1}

{n_M2L_local = 0 } // actual number created on this host

objectvar a_M2L[n_M2L]

proc addCell_M2L() {
    strdef reference
    sprint(reference, "M2L_%d", $1)
    a_M2L[$1] = new M2L(reference, "M2L", "         Motor Neuron       ")
    allCells.append(a_M2L[$1])
}

for i = 0, n_M2L-1 {
    addCell_M2L(i)
    n_M2L_local = n_M2L_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M2L[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 136: M2R has cells of type: M2R
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M2R.hoc for cell group M2R

{ load_file("M2R.hoc") }

//  Adding 1 cells of type M2R in region WormBody

{n_M2R = 1}

{n_M2R_local = 0 } // actual number created on this host

objectvar a_M2R[n_M2R]

proc addCell_M2R() {
    strdef reference
    sprint(reference, "M2R_%d", $1)
    a_M2R[$1] = new M2R(reference, "M2R", "         Motor Neuron       ")
    allCells.append(a_M2R[$1])
}

for i = 0, n_M2R-1 {
    addCell_M2R(i)
    n_M2R_local = n_M2R_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M2R[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 137: M4 has cells of type: M4
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M4.hoc for cell group M4

{ load_file("M4.hoc") }

//  Adding 1 cells of type M4 in region WormBody

{n_M4 = 1}

{n_M4_local = 0 } // actual number created on this host

objectvar a_M4[n_M4]

proc addCell_M4() {
    strdef reference
    sprint(reference, "M4_%d", $1)
    a_M4[$1] = new M4(reference, "M4", "         Motor Neuron       ")
    allCells.append(a_M4[$1])
}

for i = 0, n_M4-1 {
    addCell_M4(i)
    n_M4_local = n_M4_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M4[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 138: M5 has cells of type: M5
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M5.hoc for cell group M5

{ load_file("M5.hoc") }

//  Adding 1 cells of type M5 in region WormBody

{n_M5 = 1}

{n_M5_local = 0 } // actual number created on this host

objectvar a_M5[n_M5]

proc addCell_M5() {
    strdef reference
    sprint(reference, "M5_%d", $1)
    a_M5[$1] = new M5(reference, "M5", "         Motor Neuron       ")
    allCells.append(a_M5[$1])
}

for i = 0, n_M5-1 {
    addCell_M5(i)
    n_M5_local = n_M5_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M5[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 139: MCL has cells of type: MCL
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: MCL.hoc for cell group MCL

{ load_file("MCL.hoc") }

//  Adding 1 cells of type MCL in region WormBody

{n_MCL = 1}

{n_MCL_local = 0 } // actual number created on this host

objectvar a_MCL[n_MCL]

proc addCell_MCL() {
    strdef reference
    sprint(reference, "MCL_%d", $1)
    a_MCL[$1] = new MCL(reference, "MCL", "         PolymodalNeuron       ")
    allCells.append(a_MCL[$1])
}

for i = 0, n_MCL-1 {
    addCell_MCL(i)
    n_MCL_local = n_MCL_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_MCL[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 140: MCR has cells of type: MCR
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: MCR.hoc for cell group MCR

{ load_file("MCR.hoc") }

//  Adding 1 cells of type MCR in region WormBody

{n_MCR = 1}

{n_MCR_local = 0 } // actual number created on this host

objectvar a_MCR[n_MCR]

proc addCell_MCR() {
    strdef reference
    sprint(reference, "MCR_%d", $1)
    a_MCR[$1] = new MCR(reference, "MCR", "         PolymodalNeuron       ")
    allCells.append(a_MCR[$1])
}

for i = 0, n_MCR-1 {
    addCell_MCR(i)
    n_MCR_local = n_MCR_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_MCR[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 141: NSML has cells of type: NSML
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: NSML.hoc for cell group NSML

{ load_file("NSML.hoc") }

//  Adding 1 cells of type NSML in region WormBody

{n_NSML = 1}

{n_NSML_local = 0 } // actual number created on this host

objectvar a_NSML[n_NSML]

proc addCell_NSML() {
    strdef reference
    sprint(reference, "NSML_%d", $1)
    a_NSML[$1] = new NSML(reference, "NSML", "         PolymodalNeuron       ")
    allCells.append(a_NSML[$1])
}

for i = 0, n_NSML-1 {
    addCell_NSML(i)
    n_NSML_local = n_NSML_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_NSML[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 142: NSMR has cells of type: NSMR
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: NSMR.hoc for cell group NSMR

{ load_file("NSMR.hoc") }

//  Adding 1 cells of type NSMR in region WormBody

{n_NSMR = 1}

{n_NSMR_local = 0 } // actual number created on this host

objectvar a_NSMR[n_NSMR]

proc addCell_NSMR() {
    strdef reference
    sprint(reference, "NSMR_%d", $1)
    a_NSMR[$1] = new NSMR(reference, "NSMR", "         PolymodalNeuron       ")
    allCells.append(a_NSMR[$1])
}

for i = 0, n_NSMR-1 {
    addCell_NSMR(i)
    n_NSMR_local = n_NSMR_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_NSMR[0].position(0.0,0.0,0.0)}

















































































































































//////////////////////////////////////////////////////////////////////
//   Cell group 287: I6 has cells of type: I6
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I6.hoc for cell group I6

{ load_file("I6.hoc") }

//  Adding 1 cells of type I6 in region WormBody

{n_I6 = 1}

{n_I6_local = 0 } // actual number created on this host

objectvar a_I6[n_I6]

proc addCell_I6() {
    strdef reference
    sprint(reference, "I6_%d", $1)
    a_I6[$1] = new I6(reference, "I6", "         Interneuron       ")
    allCells.append(a_I6[$1])
}

for i = 0, n_I6-1 {
    addCell_I6(i)
    n_I6_local = n_I6_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I6[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 288: MI has cells of type: MI
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: MI.hoc for cell group MI

{ load_file("MI.hoc") }

//  Adding 1 cells of type MI in region WormBody

{n_MI = 1}

{n_MI_local = 0 } // actual number created on this host

objectvar a_MI[n_MI]

proc addCell_MI() {
    strdef reference
    sprint(reference, "MI_%d", $1)
    a_MI[$1] = new MI(reference, "MI", "         Interneuron       ")
    allCells.append(a_MI[$1])
}

for i = 0, n_MI-1 {
    addCell_MI(i)
    n_MI_local = n_MI_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_MI[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 289: M3R has cells of type: M3R
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M3R.hoc for cell group M3R

{ load_file("M3R.hoc") }

//  Adding 1 cells of type M3R in region WormBody

{n_M3R = 1}

{n_M3R_local = 0 } // actual number created on this host

objectvar a_M3R[n_M3R]

proc addCell_M3R() {
    strdef reference
    sprint(reference, "M3R_%d", $1)
    a_M3R[$1] = new M3R(reference, "M3R", "         Motor Neuron       ")
    allCells.append(a_M3R[$1])
}

for i = 0, n_M3R-1 {
    addCell_M3R(i)
    n_M3R_local = n_M3R_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M3R[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 290: M3L has cells of type: M3L
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M3L.hoc for cell group M3L

{ load_file("M3L.hoc") }

//  Adding 1 cells of type M3L in region WormBody

{n_M3L = 1}

{n_M3L_local = 0 } // actual number created on this host

objectvar a_M3L[n_M3L]

proc addCell_M3L() {
    strdef reference
    sprint(reference, "M3L_%d", $1)
    a_M3L[$1] = new M3L(reference, "M3L", "         Motor Neuron       ")
    allCells.append(a_M3L[$1])
}

for i = 0, n_M3L-1 {
    addCell_M3L(i)
    n_M3L_local = n_M3L_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M3L[0].position(0.0,0.0,0.0)}



//////////////////////////////////////////////////////////////////////
//   Cell group 293: M1 has cells of type: M1
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: M1.hoc for cell group M1

{ load_file("M1.hoc") }

//  Adding 1 cells of type M1 in region WormBody

{n_M1 = 1}

{n_M1_local = 0 } // actual number created on this host

objectvar a_M1[n_M1]

proc addCell_M1() {
    strdef reference
    sprint(reference, "M1_%d", $1)
    a_M1[$1] = new M1(reference, "M1", "         Motor Neuron       ")
    allCells.append(a_M1[$1])
}

for i = 0, n_M1-1 {
    addCell_M1(i)
    n_M1_local = n_M1_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_M1[0].position(0.0,0.0,0.0)}

//////////////////////////////////////////////////////////////////////
//   Cell group 294: I5 has cells of type: I5
//////////////////////////////////////////////////////////////////////


//  Adding cell template file: I5.hoc for cell group I5

{ load_file("I5.hoc") }

//  Adding 1 cells of type I5 in region WormBody

{n_I5 = 1}

{n_I5_local = 0 } // actual number created on this host

objectvar a_I5[n_I5]

proc addCell_I5() {
    strdef reference
    sprint(reference, "I5_%d", $1)
    a_I5[$1] = new I5(reference, "I5", "         Interneuron       ")
    allCells.append(a_I5[$1])
}

for i = 0, n_I5-1 {
    addCell_I5(i)
    n_I5_local = n_I5_local +1 

}


//  Placing these cells in a region described by: Rectangular Box from point: (0.0, 0.0, 0.0) to (1.0, 1.0, 1.0)


//  Packing has been generated by: Single cell: (0.0, 0.0, 0.0) (absolute position)

{a_I5[0].position(0.0,0.0,0.0)}










//////////////////////////////////////////////////////////////////////
//   Setting initial parameters
//////////////////////////////////////////////////////////////////////

strdef simConfig
{simConfig = "PharyngealNeurons_inputs"}
{celsius = 20.0}






















proc initialiseValues0() {


//  Setting initial vals in cell group: I1L which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I1L-1 {
        forsec a_I1L[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I1R which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I1R-1 {
        forsec a_I1R[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I2L which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I2L-1 {
        forsec a_I2L[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I2R which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I2R-1 {
        forsec a_I2R[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I3 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I3-1 {
        forsec a_I3[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I4 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I4-1 {
        forsec a_I4[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M2L which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M2L-1 {
        forsec a_M2L[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M2R which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M2R-1 {
        forsec a_M2R[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M4 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M4-1 {
        forsec a_M4[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M5 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M5-1 {
        forsec a_M5[i].all  v = -65.0

    }


//  Setting initial vals in cell group: MCL which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_MCL-1 {
        forsec a_MCL[i].all  v = -65.0

    }


//  Setting initial vals in cell group: MCR which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_MCR-1 {
        forsec a_MCR[i].all  v = -65.0

    }


//  Setting initial vals in cell group: NSML which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_NSML-1 {
        forsec a_NSML[i].all  v = -65.0

    }


//  Setting initial vals in cell group: NSMR which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_NSMR-1 {
        forsec a_NSMR[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I6 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I6-1 {
        forsec a_I6[i].all  v = -65.0

    }


//  Setting initial vals in cell group: MI which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_MI-1 {
        forsec a_MI[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M3R which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M3R-1 {
        forsec a_M3R[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M3L which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M3L-1 {
        forsec a_M3L[i].all  v = -65.0

    }


//  Setting initial vals in cell group: M1 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_M1-1 {
        forsec a_M1[i].all  v = -65.0

    }


//  Setting initial vals in cell group: I5 which has 1 cells


//  Giving all cells an initial potential of: -65.0

    for i = 0, n_I5-1 {
        forsec a_I5[i].all  v = -65.0

    }

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}



//////////////////////////////////////////////////////////////////////
//   Adding Network Connections
//////////////////////////////////////////////////////////////////////


// Adding NetConn: NCXLS_NSML_M3R from: NSML to: M3R with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.39708623, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_M3R_Serotonin_Glutamate[1]

{a_M3R[0].Neurite4 syn_NCXLS_NSML_M3R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.8091508)}
{a_NSML[0].Neurite2 a_M3R[0].synlist.append(new NetCon(&v(0.39708623), syn_NCXLS_NSML_M3R_Serotonin_Glutamate[0], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_NSMR_I6 from: NSMR to: I6 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.77756244, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I6_Serotonin_Glutamate[2]

{a_I6[0].Axon syn_NCXLS_NSMR_I6_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.8349539)}
{a_NSMR[0].Neurite3 a_I6[0].synlist.append(new NetCon(&v(0.77756244), syn_NCXLS_NSMR_I6_Serotonin_Glutamate[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5575799, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I6[0].Axon syn_NCXLS_NSMR_I6_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.3259083)}
{a_NSMR[0].Neurite2 a_I6[0].synlist.append(new NetCon(&v(0.5575799), syn_NCXLS_NSMR_I6_Serotonin_Glutamate[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_NSMR_I5 from: NSMR to: I5 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.2538494, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I5_Serotonin_Glutamate[2]

{a_I5[0].Neurite7 syn_NCXLS_NSMR_I5_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.098305404)}
{a_NSMR[0].Neurite2 a_I5[0].synlist.append(new NetCon(&v(0.2538494), syn_NCXLS_NSMR_I5_Serotonin_Glutamate[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.88573676, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Axon syn_NCXLS_NSMR_I5_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.050790567)}
{a_NSMR[0].Neurite3 a_I5[0].synlist.append(new NetCon(&v(0.88573676), syn_NCXLS_NSMR_I5_Serotonin_Glutamate[1], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_M2L_M2R_GJ from: M2L to: M2R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.83942163, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_B[1]

a_M2R[0].Axon { elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.7380634) }
elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_A[0].weight = 0.200000
setpointer elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_A[0].vgap, a_M2L[0].Axon.v(0.83942163)

a_M2L[0].Axon { elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.83942163) }
elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_B[0].weight = 0.200000
setpointer elecsyn_NCXLS_M2L_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.7380634)


// Adding NetConn: NCXLS_I1L_I1R_GJ from: I1L to: I1R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.990148, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_B[1]

a_I1R[0].Axon { elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.034426924) }
elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_A[0].weight = 0.100000
setpointer elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_A[0].vgap, a_I1L[0].Dendrite2.v(0.990148)

a_I1L[0].Dendrite2 { elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.990148) }
elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_B[0].weight = 0.100000
setpointer elecsyn_NCXLS_I1L_I1R_GJ_Generic_GJ_B[0].vgap, a_I1R[0].Axon.v(0.034426924)


// Adding NetConn: NCXLS_NSMR_I4 from: NSMR to: I4 with 3 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.03484083, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I4_Serotonin_Glutamate[3]

{a_I4[0].Axon syn_NCXLS_NSMR_I4_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.8444346)}
{a_NSMR[0].Neurite3 a_I4[0].synlist.append(new NetCon(&v(0.03484083), syn_NCXLS_NSMR_I4_Serotonin_Glutamate[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.15918465, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_NSMR_I4_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.25979435)}
{a_NSMR[0].Neurite2 a_I4[0].synlist.append(new NetCon(&v(0.15918465), syn_NCXLS_NSMR_I4_Serotonin_Glutamate[1], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.016696062, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Dendrite2 syn_NCXLS_NSMR_I4_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.9855163)}
{a_NSMR[0].Neurite3 a_I4[0].synlist.append(new NetCon(&v(0.016696062), syn_NCXLS_NSMR_I4_Serotonin_Glutamate[2], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_NSMR_I3 from: NSMR to: I3 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3170301, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I3_Serotonin_Glutamate[2]

{a_I3[0].Axon syn_NCXLS_NSMR_I3_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.38009116)}
{a_NSMR[0].Neurite3 a_I3[0].synlist.append(new NetCon(&v(0.3170301), syn_NCXLS_NSMR_I3_Serotonin_Glutamate[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6641159, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I3[0].Dendrite2 syn_NCXLS_NSMR_I3_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.22456397)}
{a_NSMR[0].Neurite2 a_I3[0].synlist.append(new NetCon(&v(0.6641159), syn_NCXLS_NSMR_I3_Serotonin_Glutamate[1], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_NSML_M3L from: NSML to: M3L with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Neurite5 on tgt cell 0
//  Fraction along src section: 0.70304996, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_M3L_Serotonin_Glutamate[1]

{a_M3L[0].Neurite5 syn_NCXLS_NSML_M3L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.86933655)}
{a_NSML[0].Neurite2 a_M3L[0].synlist.append(new NetCon(&v(0.70304996), syn_NCXLS_NSML_M3L_Serotonin_Glutamate[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_M2L_I1R from: M2L to: I1R with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.41929764, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2L_I1R_Acetylcholine[3]

{a_I1R[0].Axon syn_NCXLS_M2L_I1R_Acetylcholine[0] = new Acetylcholine(0.94928783)}
{a_M2L[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.41929764), syn_NCXLS_M2L_I1R_Acetylcholine[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.7658866, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M2L_I1R_Acetylcholine[1] = new Acetylcholine(0.60681146)}
{a_M2L[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.7658866), syn_NCXLS_M2L_I1R_Acetylcholine[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8048338, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M2L_I1R_Acetylcholine[2] = new Acetylcholine(0.6049243)}
{a_M2L[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.8048338), syn_NCXLS_M2L_I1R_Acetylcholine[2], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_M3R_I1R from: M3R to: I1R with 4 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.4361456, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I1R_Glutamate[4]

{a_I1R[0].Dendrite2 syn_NCXLS_M3R_I1R_Glutamate[0] = new Glutamate(0.73238564)}
{a_M3R[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.4361456), syn_NCXLS_M3R_I1R_Glutamate[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6638845, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M3R_I1R_Glutamate[1] = new Glutamate(0.62986535)}
{a_M3R[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.6638845), syn_NCXLS_M3R_I1R_Glutamate[1], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.91065043, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_M3R_I1R_Glutamate[2] = new Glutamate(0.0043928325)}
{a_M3R[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.91065043), syn_NCXLS_M3R_I1R_Glutamate[2], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.8611247, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_M3R_I1R_Glutamate[3] = new Glutamate(0.7592469)}
{a_M3R[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.8611247), syn_NCXLS_M3R_I1R_Glutamate[3], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M2L_I1L from: M2L to: I1L with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.72870684, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2L_I1L_Acetylcholine[3]

{a_I1L[0].Dendrite2 syn_NCXLS_M2L_I1L_Acetylcholine[0] = new Acetylcholine(0.877022)}
{a_M2L[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.72870684), syn_NCXLS_M2L_I1L_Acetylcholine[0], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.42139488, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_M2L_I1L_Acetylcholine[1] = new Acetylcholine(0.06438646)}
{a_M2L[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.42139488), syn_NCXLS_M2L_I1L_Acetylcholine[1], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.44298542, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_M2L_I1L_Acetylcholine[2] = new Acetylcholine(0.019089585)}
{a_M2L[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.44298542), syn_NCXLS_M2L_I1L_Acetylcholine[2], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_I1L_I3 from: I1L to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.60746, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I1L_I3_Acetylcholine[1]

{a_I3[0].Axon syn_NCXLS_I1L_I3_Acetylcholine[0] = new Acetylcholine(0.31495526)}
{a_I1L[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.60746), syn_NCXLS_I1L_I3_Acetylcholine[0], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M3R_MCR_GJ from: M3R to: MCR with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite5 on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.59024024, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_B[1]

a_MCR[0].Neurite4 { elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_A[0] = new Generic_GJ(0.07245779) }
elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_A[0].vgap, a_M3R[0].Neurite5.v(0.59024024)

a_M3R[0].Neurite5 { elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_B[0] = new Generic_GJ(0.59024024) }
elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3R_MCR_GJ_Generic_GJ_B[0].vgap, a_MCR[0].Neurite4.v(0.07245779)


// Adding NetConn: NCXLS_M1_I3_GJ from: M1 to: I3 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.651927, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_B[1]

a_I3[0].Dendrite2 { elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_A[0] = new Generic_GJ(0.4555965) }
elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_A[0].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_A[0].vgap, a_M1[0].Axon.v(0.651927)

a_M1[0].Axon { elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_B[0] = new Generic_GJ(0.651927) }
elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_B[0].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I3_GJ_Generic_GJ_B[0].vgap, a_I3[0].Dendrite2.v(0.4555965)


// Adding NetConn: NCXLS_M3R_I1L from: M3R to: I1L with 4 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.14634323, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I1L_Glutamate[4]

{a_I1L[0].Dendrite2 syn_NCXLS_M3R_I1L_Glutamate[0] = new Glutamate(0.87975246)}
{a_M3R[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.14634323), syn_NCXLS_M3R_I1L_Glutamate[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.11919928, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M3R_I1L_Glutamate[1] = new Glutamate(0.29684675)}
{a_M3R[0].Neurite5 a_I1L[0].synlist.append(new NetCon(&v(0.11919928), syn_NCXLS_M3R_I1L_Glutamate[1], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.56070405, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M3R_I1L_Glutamate[2] = new Glutamate(0.5719103)}
{a_M3R[0].Neurite5 a_I1L[0].synlist.append(new NetCon(&v(0.56070405), syn_NCXLS_M3R_I1L_Glutamate[2], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3349044, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M3R_I1L_Glutamate[3] = new Glutamate(0.4362446)}
{a_M3R[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.3349044), syn_NCXLS_M3R_I1L_Glutamate[3], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_M1_I4_GJ from: M1 to: I4 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.042364307, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_B[1]

a_I4[0].Dendrite2 { elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_A[0] = new Generic_GJ(0.49413562) }
elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_A[0].weight = 0.100000
setpointer elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_A[0].vgap, a_M1[0].Axon.v(0.042364307)

a_M1[0].Axon { elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_B[0] = new Generic_GJ(0.042364307) }
elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_B[0].weight = 0.100000
setpointer elecsyn_NCXLS_M1_I4_GJ_Generic_GJ_B[0].vgap, a_I4[0].Dendrite2.v(0.49413562)


// Adding NetConn: NCXLS_M5_M1 from: M5 to: M1 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.57147753, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M5_M1_Acetylcholine[1]

{a_M1[0].Axon syn_NCXLS_M5_M1_Acetylcholine[0] = new Acetylcholine(0.1347662)}
{a_M5[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.57147753), syn_NCXLS_M5_M1_Acetylcholine[0], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_I2R_I1L_GJ from: I2R to: I1L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.084608994, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_B[1]

a_I1L[0].Axon { elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.14180808) }
elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_A[0].weight = 0.600000
setpointer elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_A[0].vgap, a_I2R[0].Axon.v(0.084608994)

a_I2R[0].Axon { elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.084608994) }
elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_B[0].weight = 0.600000
setpointer elecsyn_NCXLS_I2R_I1L_GJ_Generic_GJ_B[0].vgap, a_I1L[0].Axon.v(0.14180808)


// Adding NetConn: NCXLS_M3L_MCL_GJ from: M3L to: MCL with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite5 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.3428045, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_B[1]

a_MCL[0].Dendrite2 { elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_A[0] = new Generic_GJ(0.843637) }
elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_A[0].vgap, a_M3L[0].Neurite5.v(0.3428045)

a_M3L[0].Neurite5 { elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_B[0] = new Generic_GJ(0.3428045) }
elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3L_MCL_GJ_Generic_GJ_B[0].vgap, a_MCL[0].Dendrite2.v(0.843637)


// Adding NetConn: NCXLS_M2R_M5_GJ from: M2R to: M5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.17584366, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_B[1]

a_M5[0].Axon { elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.104392126) }
elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_A[0].weight = 0.300000
setpointer elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_A[0].vgap, a_M2R[0].Axon.v(0.17584366)

a_M2R[0].Axon { elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.17584366) }
elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_B[0].weight = 0.300000
setpointer elecsyn_NCXLS_M2R_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Axon.v(0.104392126)


// Adding NetConn: NCXLS_NSMR_I2R from: NSMR to: I2R with 6 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.54739976, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[6]

{a_I2R[0].Axon syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.83796906)}
{a_NSMR[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.54739976), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6524709, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Dendrite2 syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.13974386)}
{a_NSMR[0].Neurite3 a_I2R[0].synlist.append(new NetCon(&v(0.6524709), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[1], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.39220837, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Dendrite2 syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.53071326)}
{a_NSMR[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.39220837), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[2], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.90819484, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[3] = new Serotonin_Glutamate(0.43456092)}
{a_NSMR[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.90819484), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[3], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.35090965, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[4] = new Serotonin_Glutamate(0.7911845)}
{a_NSMR[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.35090965), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[4], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.49529544, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Dendrite2 syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[5] = new Serotonin_Glutamate(0.20205808)}
{a_NSMR[0].Neurite3 a_I2R[0].synlist.append(new NetCon(&v(0.49529544), syn_NCXLS_NSMR_I2R_Serotonin_Glutamate[5], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_M5_M2L_GJ from: M5 to: M2L with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.20085944, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[2]

a_M2L[0].Axon { elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.21505661) }
elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[0].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[0].vgap, a_M5[0].Dendrite2.v(0.20085944)

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.20085944) }
elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[0].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[0].vgap, a_M2L[0].Axon.v(0.21505661)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.80533373, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2L[0].Axon { elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[1] = new Generic_GJ(0.77373356) }
elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[1].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_A[1].vgap, a_M5[0].Axon.v(0.80533373)

a_M5[0].Axon { elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[1] = new Generic_GJ(0.80533373) }
elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[1].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2L_GJ_Generic_GJ_B[1].vgap, a_M2L[0].Axon.v(0.77373356)


// Adding NetConn: NCXLS_NSMR_I2L from: NSMR to: I2L with 6 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.61424464, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[6]

{a_I2L[0].Dendrite2 syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.42104444)}
{a_NSMR[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.61424464), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3573674, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.40910134)}
{a_NSMR[0].Neurite3 a_I2L[0].synlist.append(new NetCon(&v(0.3573674), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[1], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.35733935, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Dendrite2 syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.5995904)}
{a_NSMR[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.35733935), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[2], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.56651735, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[3] = new Serotonin_Glutamate(0.5701808)}
{a_NSMR[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.56651735), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[3], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5180653, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[4] = new Serotonin_Glutamate(0.71854305)}
{a_NSMR[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.5180653), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[4], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.30063763, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[5] = new Serotonin_Glutamate(0.80750775)}
{a_NSMR[0].Neurite3 a_I2L[0].synlist.append(new NetCon(&v(0.30063763), syn_NCXLS_NSMR_I2L_Serotonin_Glutamate[5], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_M3L_I1R from: M3L to: I1R with 4 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.7245071, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_I1R_Glutamate[4]

{a_I1R[0].Dendrite2 syn_NCXLS_M3L_I1R_Glutamate[0] = new Glutamate(0.051713284)}
{a_M3L[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.7245071), syn_NCXLS_M3L_I1R_Glutamate[0], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.16396478, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_M3L_I1R_Glutamate[1] = new Glutamate(0.29354376)}
{a_M3L[0].Neurite5 a_I1R[0].synlist.append(new NetCon(&v(0.16396478), syn_NCXLS_M3L_I1R_Glutamate[1], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.819083, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M3L_I1R_Glutamate[2] = new Glutamate(0.29665652)}
{a_M3L[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.819083), syn_NCXLS_M3L_I1R_Glutamate[2], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.7421432, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_M3L_I1R_Glutamate[3] = new Glutamate(0.1856687)}
{a_M3L[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.7421432), syn_NCXLS_M3L_I1R_Glutamate[3], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_I2R_M1_GJ from: I2R to: M1 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.23501197, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_B[1]

a_M1[0].Axon { elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_A[0] = new Generic_GJ(0.4041027) }
elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_A[0].weight = 0.300000
setpointer elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_A[0].vgap, a_I2R[0].Dendrite2.v(0.23501197)

a_I2R[0].Dendrite2 { elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_B[0] = new Generic_GJ(0.23501197) }
elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_B[0].weight = 0.300000
setpointer elecsyn_NCXLS_I2R_M1_GJ_Generic_GJ_B[0].vgap, a_M1[0].Axon.v(0.4041027)


// Adding NetConn: NCXLS_I2L_M1_GJ from: I2L to: M1 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.91457725, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_B[1]

a_M1[0].Axon { elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_A[0] = new Generic_GJ(0.70208657) }
elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_A[0].weight = 0.300000
setpointer elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_A[0].vgap, a_I2L[0].Axon.v(0.91457725)

a_I2L[0].Axon { elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_B[0] = new Generic_GJ(0.91457725) }
elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_B[0].weight = 0.300000
setpointer elecsyn_NCXLS_I2L_M1_GJ_Generic_GJ_B[0].vgap, a_M1[0].Axon.v(0.70208657)


// Adding NetConn: NCXLS_M3L_I1L from: M3L to: I1L with 4 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.06552148, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_I1L_Glutamate[4]

{a_I1L[0].Axon syn_NCXLS_M3L_I1L_Glutamate[0] = new Glutamate(0.19717383)}
{a_M3L[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.06552148), syn_NCXLS_M3L_I1L_Glutamate[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6299162, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_M3L_I1L_Glutamate[1] = new Glutamate(0.61783594)}
{a_M3L[0].Neurite5 a_I1L[0].synlist.append(new NetCon(&v(0.6299162), syn_NCXLS_M3L_I1L_Glutamate[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5460932, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M3L_I1L_Glutamate[2] = new Glutamate(0.65143335)}
{a_M3L[0].Neurite5 a_I1L[0].synlist.append(new NetCon(&v(0.5460932), syn_NCXLS_M3L_I1L_Glutamate[2], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3729113, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M3L_I1L_Glutamate[3] = new Glutamate(0.69630253)}
{a_M3L[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.3729113), syn_NCXLS_M3L_I1L_Glutamate[3], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_I2L_I1L_GJ from: I2L to: I1L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.83967674, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_B[1]

a_I1L[0].Dendrite2 { elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.11887417) }
elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_A[0].vgap, a_I2L[0].Axon.v(0.83967674)

a_I2L[0].Axon { elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.83967674) }
elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_I2L_I1L_GJ_Generic_GJ_B[0].vgap, a_I1L[0].Dendrite2.v(0.11887417)


// Adding NetConn: NCXLS_I1R_I3 from: I1R to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6433387, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I1R_I3_Acetylcholine[1]

{a_I3[0].Dendrite2 syn_NCXLS_I1R_I3_Acetylcholine[0] = new Acetylcholine(0.283006)}
{a_I1R[0].Dendrite2 a_I3[0].synlist.append(new NetCon(&v(0.6433387), syn_NCXLS_I1R_I3_Acetylcholine[0], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_I5_I1R from: I5 to: I1R with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite10 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.28994823, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I5_I1R_Serotonin_Glutamate[2]

{a_I1R[0].Axon syn_NCXLS_I5_I1R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.27467945)}
{a_I5[0].Neurite10 a_I1R[0].synlist.append(new NetCon(&v(0.28994823), syn_NCXLS_I5_I1R_Serotonin_Glutamate[0], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.0636128, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_I5_I1R_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.21919027)}
{a_I5[0].Neurite3 a_I1R[0].synlist.append(new NetCon(&v(0.0636128), syn_NCXLS_I5_I1R_Serotonin_Glutamate[1], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_I2L_M1 from: I2L to: M1 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.160202, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I2L_M1_Glutamate[2]

{a_M1[0].Axon syn_NCXLS_I2L_M1_Glutamate[0] = new Glutamate(0.8453694)}
{a_I2L[0].Axon a_M1[0].synlist.append(new NetCon(&v(0.160202), syn_NCXLS_I2L_M1_Glutamate[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.9196907, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_M1[0].Axon syn_NCXLS_I2L_M1_Glutamate[1] = new Glutamate(0.4853541)}
{a_I2L[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.9196907), syn_NCXLS_I2L_M1_Glutamate[1], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M2L_M5_GJ from: M2L to: M5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.14679462, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_B[1]

a_M5[0].Axon { elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.6706252) }
elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_A[0].weight = 0.400000
setpointer elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_A[0].vgap, a_M2L[0].Axon.v(0.14679462)

a_M2L[0].Axon { elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.14679462) }
elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_B[0].weight = 0.400000
setpointer elecsyn_NCXLS_M2L_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Axon.v(0.6706252)


// Adding NetConn: NCXLS_I4_I2R from: I4 to: I2R with 5 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.8827689, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I4_I2R_Glutamate[5]

{a_I2R[0].Dendrite2 syn_NCXLS_I4_I2R_Glutamate[0] = new Glutamate(0.35956782)}
{a_I4[0].Axon a_I2R[0].synlist.append(new NetCon(&v(0.8827689), syn_NCXLS_I4_I2R_Glutamate[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3083606, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_I4_I2R_Glutamate[1] = new Glutamate(0.21002786)}
{a_I4[0].Axon a_I2R[0].synlist.append(new NetCon(&v(0.3083606), syn_NCXLS_I4_I2R_Glutamate[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4186867, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_I4_I2R_Glutamate[2] = new Glutamate(0.7731748)}
{a_I4[0].Dendrite2 a_I2R[0].synlist.append(new NetCon(&v(0.4186867), syn_NCXLS_I4_I2R_Glutamate[2], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.22193289, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_I4_I2R_Glutamate[3] = new Glutamate(0.3452668)}
{a_I4[0].Dendrite2 a_I2R[0].synlist.append(new NetCon(&v(0.22193289), syn_NCXLS_I4_I2R_Glutamate[3], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.22482729, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_I4_I2R_Glutamate[4] = new Glutamate(0.7537915)}
{a_I4[0].Dendrite2 a_I2R[0].synlist.append(new NetCon(&v(0.22482729), syn_NCXLS_I4_I2R_Glutamate[4], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_I5_I1L from: I5 to: I1L with 3 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite7 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.97341657, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I5_I1L_Serotonin_Glutamate[3]

{a_I1L[0].Axon syn_NCXLS_I5_I1L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.16617751)}
{a_I5[0].Neurite7 a_I1L[0].synlist.append(new NetCon(&v(0.97341657), syn_NCXLS_I5_I1L_Serotonin_Glutamate[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.740302, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_I5_I1L_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.96407)}
{a_I5[0].Neurite3 a_I1L[0].synlist.append(new NetCon(&v(0.740302), syn_NCXLS_I5_I1L_Serotonin_Glutamate[1], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.0751435, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_I5_I1L_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.36235198)}
{a_I5[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.0751435), syn_NCXLS_I5_I1L_Serotonin_Glutamate[2], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_I2R_I1R_GJ from: I2R to: I1R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.50478107, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_B[1]

a_I1R[0].Axon { elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.6921931) }
elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_A[0].weight = 0.900000
setpointer elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_A[0].vgap, a_I2R[0].Axon.v(0.50478107)

a_I2R[0].Axon { elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.50478107) }
elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_B[0].weight = 0.900000
setpointer elecsyn_NCXLS_I2R_I1R_GJ_Generic_GJ_B[0].vgap, a_I1R[0].Axon.v(0.6921931)


// Adding NetConn: NCXLS_NSML_I2R from: NSML to: I2R with 6 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.9598028, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I2R_Serotonin_Glutamate[6]

{a_I2R[0].Axon syn_NCXLS_NSML_I2R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.65325)}
{a_NSML[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.9598028), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.7658189, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_NSML_I2R_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.49537447)}
{a_NSML[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.7658189), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[1], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8375212, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_NSML_I2R_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.5028891)}
{a_NSML[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.8375212), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[2], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.68987054, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_NSML_I2R_Serotonin_Glutamate[3] = new Serotonin_Glutamate(0.22043657)}
{a_NSML[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.68987054), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[3], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.36150977, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Dendrite2 syn_NCXLS_NSML_I2R_Serotonin_Glutamate[4] = new Serotonin_Glutamate(0.13981465)}
{a_NSML[0].Neurite3 a_I2R[0].synlist.append(new NetCon(&v(0.36150977), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[4], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.06456939, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Dendrite2 syn_NCXLS_NSML_I2R_Serotonin_Glutamate[5] = new Serotonin_Glutamate(0.22206947)}
{a_NSML[0].Neurite2 a_I2R[0].synlist.append(new NetCon(&v(0.06456939), syn_NCXLS_NSML_I2R_Serotonin_Glutamate[5], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_M3L_MCR_GJ from: M3L to: MCR with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6792085, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_B[1]

a_MCR[0].Dendrite2 { elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_A[0] = new Generic_GJ(0.58175397) }
elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_A[0].weight = 0.600000
setpointer elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_A[0].vgap, a_M3L[0].Neurite4.v(0.6792085)

a_M3L[0].Neurite4 { elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6792085) }
elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_B[0].weight = 0.600000
setpointer elecsyn_NCXLS_M3L_MCR_GJ_Generic_GJ_B[0].vgap, a_MCR[0].Dendrite2.v(0.58175397)


// Adding NetConn: NCXLS_I4_I2L from: I4 to: I2L with 5 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.48873007, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I4_I2L_Glutamate[5]

{a_I2L[0].Axon syn_NCXLS_I4_I2L_Glutamate[0] = new Glutamate(0.0073745865)}
{a_I4[0].Dendrite2 a_I2L[0].synlist.append(new NetCon(&v(0.48873007), syn_NCXLS_I4_I2L_Glutamate[0], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.40648326, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_I4_I2L_Glutamate[1] = new Glutamate(0.735806)}
{a_I4[0].Dendrite2 a_I2L[0].synlist.append(new NetCon(&v(0.40648326), syn_NCXLS_I4_I2L_Glutamate[1], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.41997653, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Dendrite2 syn_NCXLS_I4_I2L_Glutamate[2] = new Glutamate(0.06562568)}
{a_I4[0].Dendrite2 a_I2L[0].synlist.append(new NetCon(&v(0.41997653), syn_NCXLS_I4_I2L_Glutamate[2], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5428816, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_I4_I2L_Glutamate[3] = new Glutamate(0.16764088)}
{a_I4[0].Axon a_I2L[0].synlist.append(new NetCon(&v(0.5428816), syn_NCXLS_I4_I2L_Glutamate[3], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6701731, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_I4_I2L_Glutamate[4] = new Glutamate(0.7507311)}
{a_I4[0].Axon a_I2L[0].synlist.append(new NetCon(&v(0.6701731), syn_NCXLS_I4_I2L_Glutamate[4], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_MCL_I3 from: MCL to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.07126685, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_I3_Acetylcholine[1]

{a_I3[0].Neurite4 syn_NCXLS_MCL_I3_Acetylcholine[0] = new Acetylcholine(0.5943176)}
{a_MCL[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.07126685), syn_NCXLS_MCL_I3_Acetylcholine[0], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_M3L_M3R_GJ from: M3L to: M3R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.68890643, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_B[1]

a_M3R[0].Neurite4 { elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.38322592) }
elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_A[0].vgap, a_M3L[0].Neurite4.v(0.68890643)

a_M3L[0].Neurite4 { elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.68890643) }
elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3L_M3R_GJ_Generic_GJ_B[0].vgap, a_M3R[0].Neurite4.v(0.38322592)


// Adding NetConn: NCXLS_M3L_I6 from: M3L to: I6 with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.16413291, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_I6_Glutamate[1]

{a_I6[0].Axon syn_NCXLS_M3L_I6_Glutamate[0] = new Glutamate(0.79961216)}
{a_M3L[0].Neurite5 a_I6[0].synlist.append(new NetCon(&v(0.16413291), syn_NCXLS_M3L_I6_Glutamate[0], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_M3L_I5 from: M3L to: I5 with 3 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.14925492, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_I5_Glutamate[3]

{a_I5[0].Neurite6 syn_NCXLS_M3L_I5_Glutamate[0] = new Glutamate(0.8416524)}
{a_M3L[0].Neurite5 a_I5[0].synlist.append(new NetCon(&v(0.14925492), syn_NCXLS_M3L_I5_Glutamate[0], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.60573405, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite7 syn_NCXLS_M3L_I5_Glutamate[1] = new Glutamate(0.48962468)}
{a_M3L[0].Neurite5 a_I5[0].synlist.append(new NetCon(&v(0.60573405), syn_NCXLS_M3L_I5_Glutamate[1], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Glutamate) from Neurite3 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.33813003, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite6 syn_NCXLS_M3L_I5_Glutamate[2] = new Glutamate(0.019349376)}
{a_M3L[0].Neurite3 a_I5[0].synlist.append(new NetCon(&v(0.33813003), syn_NCXLS_M3L_I5_Glutamate[2], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_NSMR_I1R from: NSMR to: I1R with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.40374178, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I1R_Serotonin_Glutamate[2]

{a_I1R[0].Axon syn_NCXLS_NSMR_I1R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.34838694)}
{a_NSMR[0].Neurite2 a_I1R[0].synlist.append(new NetCon(&v(0.40374178), syn_NCXLS_NSMR_I1R_Serotonin_Glutamate[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.10183321, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_NSMR_I1R_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.82965505)}
{a_NSMR[0].Neurite2 a_I1R[0].synlist.append(new NetCon(&v(0.10183321), syn_NCXLS_NSMR_I1R_Serotonin_Glutamate[1], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_NSML_I2L from: NSML to: I2L with 6 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.1781974, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I2L_Serotonin_Glutamate[6]

{a_I2L[0].Axon syn_NCXLS_NSML_I2L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.7803023)}
{a_NSML[0].Neurite3 a_I2L[0].synlist.append(new NetCon(&v(0.1781974), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.69712645, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSML_I2L_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.12487585)}
{a_NSML[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.69712645), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[1], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4942474, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSML_I2L_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.81963384)}
{a_NSML[0].Neurite3 a_I2L[0].synlist.append(new NetCon(&v(0.4942474), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[2], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.22523637, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Dendrite2 syn_NCXLS_NSML_I2L_Serotonin_Glutamate[3] = new Serotonin_Glutamate(0.51641834)}
{a_NSML[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.22523637), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[3], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.75240195, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSML_I2L_Serotonin_Glutamate[4] = new Serotonin_Glutamate(0.25765952)}
{a_NSML[0].Neurite2 a_I2L[0].synlist.append(new NetCon(&v(0.75240195), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[4], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.95914805, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_NSML_I2L_Serotonin_Glutamate[5] = new Serotonin_Glutamate(0.26975933)}
{a_NSML[0].Neurite3 a_I2L[0].synlist.append(new NetCon(&v(0.95914805), syn_NCXLS_NSML_I2L_Serotonin_Glutamate[5], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M3L_I4 from: M3L to: I4 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.29082954, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_I4_Glutamate[2]

{a_I4[0].Dendrite2 syn_NCXLS_M3L_I4_Glutamate[0] = new Glutamate(0.62918556)}
{a_M3L[0].Neurite4 a_I4[0].synlist.append(new NetCon(&v(0.29082954), syn_NCXLS_M3L_I4_Glutamate[0], 0.0, 0.0, 0.700000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.11313699, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_M3L_I4_Glutamate[1] = new Glutamate(0.021014057)}
{a_M3L[0].Neurite5 a_I4[0].synlist.append(new NetCon(&v(0.11313699), syn_NCXLS_M3L_I4_Glutamate[1], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_M5_M2R_GJ from: M5 to: M2R with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6773752, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[2]

a_M2R[0].Axon { elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.5040304) }
elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[0].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[0].vgap, a_M5[0].Dendrite2.v(0.6773752)

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6773752) }
elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[0].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.5040304)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8277799, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2R[0].Axon { elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[1] = new Generic_GJ(0.1893583) }
elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[1].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_A[1].vgap, a_M5[0].Axon.v(0.8277799)

a_M5[0].Axon { elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[1] = new Generic_GJ(0.8277799) }
elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[1].weight = 0.000000
setpointer elecsyn_NCXLS_M5_M2R_GJ_Generic_GJ_B[1].vgap, a_M2R[0].Axon.v(0.1893583)


// Adding NetConn: NCXLS_I3_M2R from: I3 to: M2R with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.79636997, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I3_M2R_Glutamate[1]

{a_M2R[0].Axon syn_NCXLS_I3_M2R_Glutamate[0] = new Glutamate(0.63159645)}
{a_I3[0].Dendrite2 a_M2R[0].synlist.append(new NetCon(&v(0.79636997), syn_NCXLS_I3_M2R_Glutamate[0], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_I3_M2L_GJ from: I3 to: M2L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6735074, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_B[1]

a_M2L[0].Axon { elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.4887956) }
elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_A[0].weight = 0.900000
setpointer elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_A[0].vgap, a_I3[0].Dendrite2.v(0.6735074)

a_I3[0].Dendrite2 { elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6735074) }
elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_B[0].weight = 0.900000
setpointer elecsyn_NCXLS_I3_M2L_GJ_Generic_GJ_B[0].vgap, a_M2L[0].Axon.v(0.4887956)


// Adding NetConn: NCXLS_NSMR_I1L from: NSMR to: I1L with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.34829387, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_I1L_Serotonin_Glutamate[2]

{a_I1L[0].Axon syn_NCXLS_NSMR_I1L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.6161181)}
{a_NSMR[0].Neurite3 a_I1L[0].synlist.append(new NetCon(&v(0.34829387), syn_NCXLS_NSMR_I1L_Serotonin_Glutamate[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Serotonin_Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4727978, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_NSMR_I1L_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.96879065)}
{a_NSMR[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.4727978), syn_NCXLS_NSMR_I1L_Serotonin_Glutamate[1], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_I3_M2L from: I3 to: M2L with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.22822739, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I3_M2L_Glutamate[1]

{a_M2L[0].Axon syn_NCXLS_I3_M2L_Glutamate[0] = new Glutamate(0.6193197)}
{a_I3[0].Dendrite2 a_M2L[0].synlist.append(new NetCon(&v(0.22822739), syn_NCXLS_I3_M2L_Glutamate[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_I2L_I1R_GJ from: I2L to: I1R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.46128932, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_B[1]

a_I1R[0].Axon { elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.20235313) }
elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_A[0].weight = 0.200000
setpointer elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_A[0].vgap, a_I2L[0].Axon.v(0.46128932)

a_I2L[0].Axon { elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.46128932) }
elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_B[0].weight = 0.200000
setpointer elecsyn_NCXLS_I2L_I1R_GJ_Generic_GJ_B[0].vgap, a_I1R[0].Axon.v(0.20235313)


// Adding NetConn: NCXLS_M5_I5_GJ from: M5 to: I5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.44644812, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_B[1]

a_I5[0].Neurite6 { elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.68412155) }
elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_A[0].weight = 0.900000
setpointer elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_A[0].vgap, a_M5[0].Dendrite2.v(0.44644812)

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.44644812) }
elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_B[0].weight = 0.900000
setpointer elecsyn_NCXLS_M5_I5_GJ_Generic_GJ_B[0].vgap, a_I5[0].Neurite6.v(0.68412155)


// Adding NetConn: NCXLS_I2R_M1 from: I2R to: M1 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.82765955, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I2R_M1_Glutamate[2]

{a_M1[0].Axon syn_NCXLS_I2R_M1_Glutamate[0] = new Glutamate(0.90388983)}
{a_I2R[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.82765955), syn_NCXLS_I2R_M1_Glutamate[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.529643, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_M1[0].Axon syn_NCXLS_I2R_M1_Glutamate[1] = new Glutamate(0.56113356)}
{a_I2R[0].Axon a_M1[0].synlist.append(new NetCon(&v(0.529643), syn_NCXLS_I2R_M1_Glutamate[1], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M5_I6_GJ from: M5 to: I6 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.0368081, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_B[1]

a_I6[0].Axon { elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_A[0] = new Generic_GJ(0.1846381) }
elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_A[0].vgap, a_M5[0].Axon.v(0.0368081)

a_M5[0].Axon { elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_B[0] = new Generic_GJ(0.0368081) }
elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M5_I6_GJ_Generic_GJ_B[0].vgap, a_I6[0].Axon.v(0.1846381)


// Adding NetConn: NCXLS_NSML_I1R from: NSML to: I1R with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.7118611, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I1R_Serotonin_Glutamate[2]

{a_I1R[0].Dendrite2 syn_NCXLS_NSML_I1R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.17563377)}
{a_NSML[0].Neurite2 a_I1R[0].synlist.append(new NetCon(&v(0.7118611), syn_NCXLS_NSML_I1R_Serotonin_Glutamate[0], 0.0, 0.0, 0.600000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.75396305, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_NSML_I1R_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.47089392)}
{a_NSML[0].Neurite3 a_I1R[0].synlist.append(new NetCon(&v(0.75396305), syn_NCXLS_NSML_I1R_Serotonin_Glutamate[1], 0.0, 0.0, 0.600000))}


// Adding NetConn: NCXLS_M2R_M3L_GJ from: M2R to: M3L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Neurite5 on tgt cell 0
//  Fraction along src section: 0.6719305, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_B[1]

a_M3L[0].Neurite5 { elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.27604604) }
elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_A[0].weight = 0.700000
setpointer elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_A[0].vgap, a_M2R[0].Axon.v(0.6719305)

a_M2R[0].Axon { elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6719305) }
elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_B[0].weight = 0.700000
setpointer elecsyn_NCXLS_M2R_M3L_GJ_Generic_GJ_B[0].vgap, a_M3L[0].Neurite5.v(0.27604604)


// Adding NetConn: NCXLS_MCR_I3 from: MCR to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.28650692, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCR_I3_Acetylcholine[1]

{a_I3[0].Dendrite2 syn_NCXLS_MCR_I3_Acetylcholine[0] = new Acetylcholine(0.7567335)}
{a_MCR[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.28650692), syn_NCXLS_MCR_I3_Acetylcholine[0], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_M4_NSMR from: M4 to: NSMR with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.24889636, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M4_NSMR_Acetylcholine[1]

{a_NSMR[0].Axon syn_NCXLS_M4_NSMR_Acetylcholine[0] = new Acetylcholine(0.8120093)}
{a_M4[0].Dendrite3 a_NSMR[0].synlist.append(new NetCon(&v(0.24889636), syn_NCXLS_M4_NSMR_Acetylcholine[0], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_M3R_I6 from: M3R to: I6 with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.79521805, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I6_Glutamate[1]

{a_I6[0].Dendrite2 syn_NCXLS_M3R_I6_Glutamate[0] = new Glutamate(0.13054822)}
{a_M3R[0].Neurite2 a_I6[0].synlist.append(new NetCon(&v(0.79521805), syn_NCXLS_M3R_I6_Glutamate[0], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_M3R_I5 from: M3R to: I5 with 3 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.4873223, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I5_Glutamate[3]

{a_I5[0].Neurite7 syn_NCXLS_M3R_I5_Glutamate[0] = new Glutamate(0.9219876)}
{a_M3R[0].Neurite4 a_I5[0].synlist.append(new NetCon(&v(0.4873223), syn_NCXLS_M3R_I5_Glutamate[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.8288752, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M3R_I5_Glutamate[1] = new Glutamate(0.2288536)}
{a_M3R[0].Neurite5 a_I5[0].synlist.append(new NetCon(&v(0.8288752), syn_NCXLS_M3R_I5_Glutamate[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.07366039, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M3R_I5_Glutamate[2] = new Glutamate(0.30297506)}
{a_M3R[0].Neurite5 a_I5[0].synlist.append(new NetCon(&v(0.07366039), syn_NCXLS_M3R_I5_Glutamate[2], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_M3R_I4 from: M3R to: I4 with 6 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.7080533, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I4_Glutamate[6]

{a_I4[0].Dendrite2 syn_NCXLS_M3R_I4_Glutamate[0] = new Glutamate(0.41678497)}
{a_M3R[0].Neurite5 a_I4[0].synlist.append(new NetCon(&v(0.7080533), syn_NCXLS_M3R_I4_Glutamate[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.32527027, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Dendrite2 syn_NCXLS_M3R_I4_Glutamate[1] = new Glutamate(0.036977872)}
{a_M3R[0].Neurite2 a_I4[0].synlist.append(new NetCon(&v(0.32527027), syn_NCXLS_M3R_I4_Glutamate[1], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.41139984, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Dendrite2 syn_NCXLS_M3R_I4_Glutamate[2] = new Glutamate(0.4675687)}
{a_M3R[0].Neurite4 a_I4[0].synlist.append(new NetCon(&v(0.41139984), syn_NCXLS_M3R_I4_Glutamate[2], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.4036507, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Dendrite2 syn_NCXLS_M3R_I4_Glutamate[3] = new Glutamate(0.3914027)}
{a_M3R[0].Neurite4 a_I4[0].synlist.append(new NetCon(&v(0.4036507), syn_NCXLS_M3R_I4_Glutamate[3], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.27875334, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_M3R_I4_Glutamate[4] = new Glutamate(0.80319303)}
{a_M3R[0].Axon a_I4[0].synlist.append(new NetCon(&v(0.27875334), syn_NCXLS_M3R_I4_Glutamate[4], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3403425, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_M3R_I4_Glutamate[5] = new Glutamate(0.890059)}
{a_M3R[0].Neurite4 a_I4[0].synlist.append(new NetCon(&v(0.3403425), syn_NCXLS_M3R_I4_Glutamate[5], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_NSML_I1L from: NSML to: I1L with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4552605, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I1L_Serotonin_Glutamate[1]

{a_I1L[0].Axon syn_NCXLS_NSML_I1L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.14602649)}
{a_NSML[0].Neurite2 a_I1L[0].synlist.append(new NetCon(&v(0.4552605), syn_NCXLS_NSML_I1L_Serotonin_Glutamate[0], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_M3R_I3 from: M3R to: I3 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.09972982, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_I3_Glutamate[2]

{a_I3[0].Axon syn_NCXLS_M3R_I3_Glutamate[0] = new Glutamate(0.80785054)}
{a_M3R[0].Neurite4 a_I3[0].synlist.append(new NetCon(&v(0.09972982), syn_NCXLS_M3R_I3_Glutamate[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.9599042, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I3[0].Dendrite2 syn_NCXLS_M3R_I3_Glutamate[1] = new Glutamate(0.50854075)}
{a_M3R[0].Neurite4 a_I3[0].synlist.append(new NetCon(&v(0.9599042), syn_NCXLS_M3R_I3_Glutamate[1], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_I4_I5 from: I4 to: I5 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Axon on src cell 0 to Neurite14 on tgt cell 0
//  Fraction along src section: 0.037544467, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I4_I5_Glutamate[2]

{a_I5[0].Neurite14 syn_NCXLS_I4_I5_Glutamate[0] = new Glutamate(0.81859607)}
{a_I4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.037544467), syn_NCXLS_I4_I5_Glutamate[0], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Neurite8 on tgt cell 0
//  Fraction along src section: 0.8385881, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite8 syn_NCXLS_I4_I5_Glutamate[1] = new Glutamate(0.8889685)}
{a_I4[0].Dendrite2 a_I5[0].synlist.append(new NetCon(&v(0.8385881), syn_NCXLS_I4_I5_Glutamate[1], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_I3_M2R_GJ from: I3 to: M2R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6684761, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_B[1]

a_M2R[0].Axon { elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.847087) }
elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_A[0].vgap, a_I3[0].Dendrite2.v(0.6684761)

a_I3[0].Dendrite2 { elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6684761) }
elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_I3_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.847087)


// Adding NetConn: NCXLS_M4_NSML from: M4 to: NSML with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.35047063, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M4_NSML_Acetylcholine[1]

{a_NSML[0].Neurite2 syn_NCXLS_M4_NSML_Acetylcholine[0] = new Acetylcholine(0.4421764)}
{a_M4[0].Dendrite3 a_NSML[0].synlist.append(new NetCon(&v(0.35047063), syn_NCXLS_M4_NSML_Acetylcholine[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_M2L_I3 from: M2L to: I3 with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.46401188, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2L_I3_Acetylcholine[2]

{a_I3[0].Axon syn_NCXLS_M2L_I3_Acetylcholine[0] = new Acetylcholine(0.7162216)}
{a_M2L[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.46401188), syn_NCXLS_M2L_I3_Acetylcholine[0], 0.0, 0.0, 0.700000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.9352124, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I3[0].Dendrite2 syn_NCXLS_M2L_I3_Acetylcholine[1] = new Acetylcholine(0.32857105)}
{a_M2L[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.9352124), syn_NCXLS_M2L_I3_Acetylcholine[1], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_I6_NSMR from: I6 to: NSMR with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.28403974, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I6_NSMR_Acetylcholine[2]

{a_NSMR[0].Neurite3 syn_NCXLS_I6_NSMR_Acetylcholine[0] = new Acetylcholine(0.010874709)}
{a_I6[0].Dendrite2 a_NSMR[0].synlist.append(new NetCon(&v(0.28403974), syn_NCXLS_I6_NSMR_Acetylcholine[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.6624428, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSMR[0].Neurite2 syn_NCXLS_I6_NSMR_Acetylcholine[1] = new Acetylcholine(0.7632971)}
{a_I6[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.6624428), syn_NCXLS_I6_NSMR_Acetylcholine[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_MCL_I2R from: MCL to: I2R with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.47524607, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_I2R_Acetylcholine[1]

{a_I2R[0].Dendrite2 syn_NCXLS_MCL_I2R_Acetylcholine[0] = new Acetylcholine(0.77896106)}
{a_MCL[0].Neurite4 a_I2R[0].synlist.append(new NetCon(&v(0.47524607), syn_NCXLS_MCL_I2R_Acetylcholine[0], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_I6_I3 from: I6 to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6796646, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I6_I3_Acetylcholine[1]

{a_I3[0].Dendrite2 syn_NCXLS_I6_I3_Acetylcholine[0] = new Acetylcholine(0.01268704)}
{a_I6[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.6796646), syn_NCXLS_I6_I3_Acetylcholine[0], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_M3L_MI from: M3L to: MI with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.041435625, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_MI_Glutamate[1]

{a_MI[0].Axon syn_NCXLS_M3L_MI_Glutamate[0] = new Glutamate(0.20472503)}
{a_M3L[0].Neurite4 a_MI[0].synlist.append(new NetCon(&v(0.041435625), syn_NCXLS_M3L_MI_Glutamate[0], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_I6_NSML from: I6 to: NSML with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.68386745, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I6_NSML_Acetylcholine[2]

{a_NSML[0].Neurite3 syn_NCXLS_I6_NSML_Acetylcholine[0] = new Acetylcholine(0.9734492)}
{a_I6[0].Axon a_NSML[0].synlist.append(new NetCon(&v(0.68386745), syn_NCXLS_I6_NSML_Acetylcholine[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.28200004, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSML[0].Axon syn_NCXLS_I6_NSML_Acetylcholine[1] = new Acetylcholine(0.34903112)}
{a_I6[0].Dendrite2 a_NSML[0].synlist.append(new NetCon(&v(0.28200004), syn_NCXLS_I6_NSML_Acetylcholine[1], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_MCR_M2L_GJ from: MCR to: M2L with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.7161139, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[2]

a_M2L[0].Axon { elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.54563266) }
elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[0].weight = 0.600000
setpointer elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[0].vgap, a_MCR[0].Neurite4.v(0.7161139)

a_MCR[0].Neurite4 { elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.7161139) }
elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[0].weight = 0.600000
setpointer elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[0].vgap, a_M2L[0].Axon.v(0.54563266)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5947431, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2L[0].Axon { elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[1] = new Generic_GJ(0.1611519) }
elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[1].weight = 0.600000
setpointer elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_A[1].vgap, a_MCR[0].Axon.v(0.5947431)

a_MCR[0].Axon { elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[1] = new Generic_GJ(0.5947431) }
elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[1].weight = 0.600000
setpointer elecsyn_NCXLS_MCR_M2L_GJ_Generic_GJ_B[1].vgap, a_M2L[0].Axon.v(0.1611519)


// Adding NetConn: NCXLS_MCR_I1R from: MCR to: I1R with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.9606157, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCR_I1R_Acetylcholine[3]

{a_I1R[0].Axon syn_NCXLS_MCR_I1R_Acetylcholine[0] = new Acetylcholine(0.5907755)}
{a_MCR[0].Neurite3 a_I1R[0].synlist.append(new NetCon(&v(0.9606157), syn_NCXLS_MCR_I1R_Acetylcholine[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.47319227, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_MCR_I1R_Acetylcholine[1] = new Acetylcholine(0.29302183)}
{a_MCR[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.47319227), syn_NCXLS_MCR_I1R_Acetylcholine[1], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.2652249, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_MCR_I1R_Acetylcholine[2] = new Acetylcholine(0.63216174)}
{a_MCR[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.2652249), syn_NCXLS_MCR_I1R_Acetylcholine[2], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_MCL_I2L from: MCL to: I2L with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.2786439, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_I2L_Acetylcholine[1]

{a_I2L[0].Dendrite2 syn_NCXLS_MCL_I2L_Acetylcholine[0] = new Acetylcholine(0.55416375)}
{a_MCL[0].Neurite4 a_I2L[0].synlist.append(new NetCon(&v(0.2786439), syn_NCXLS_MCL_I2L_Acetylcholine[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_I6_M4_GJ from: I6 to: M4 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite3 on tgt cell 0
//  Fraction along src section: 0.41343686, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_B[1]

a_M4[0].Dendrite3 { elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_A[0] = new Generic_GJ(0.5101401) }
elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_A[0].vgap, a_I6[0].Axon.v(0.41343686)

a_I6[0].Axon { elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_B[0] = new Generic_GJ(0.41343686) }
elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_I6_M4_GJ_Generic_GJ_B[0].vgap, a_M4[0].Dendrite3.v(0.5101401)


// Adding NetConn: NCXLS_M3R_NSMR from: M3R to: NSMR with 3 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.29989704, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_NSMR_Glutamate[3]

{a_NSMR[0].Neurite2 syn_NCXLS_M3R_NSMR_Glutamate[0] = new Glutamate(0.6096527)}
{a_M3R[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.29989704), syn_NCXLS_M3R_NSMR_Glutamate[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.6500372, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSMR[0].Neurite2 syn_NCXLS_M3R_NSMR_Glutamate[1] = new Glutamate(0.698452)}
{a_M3R[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.6500372), syn_NCXLS_M3R_NSMR_Glutamate[1], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.22840674, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSMR[0].Neurite3 syn_NCXLS_M3R_NSMR_Glutamate[2] = new Glutamate(0.62595636)}
{a_M3R[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.22840674), syn_NCXLS_M3R_NSMR_Glutamate[2], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_MCR_I1L from: MCR to: I1L with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.24063222, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCR_I1L_Acetylcholine[3]

{a_I1L[0].Dendrite2 syn_NCXLS_MCR_I1L_Acetylcholine[0] = new Acetylcholine(0.02123087)}
{a_MCR[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.24063222), syn_NCXLS_MCR_I1L_Acetylcholine[0], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.29068497, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_MCR_I1L_Acetylcholine[1] = new Acetylcholine(0.19001068)}
{a_MCR[0].Dendrite2 a_I1L[0].synlist.append(new NetCon(&v(0.29068497), syn_NCXLS_MCR_I1L_Acetylcholine[1], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Acetylcholine) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6772593, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_MCR_I1L_Acetylcholine[2] = new Acetylcholine(0.5973324)}
{a_MCR[0].Neurite3 a_I1L[0].synlist.append(new NetCon(&v(0.6772593), syn_NCXLS_MCR_I1L_Acetylcholine[2], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_M2R_M3R_GJ from: M2R to: M3R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Neurite5 on tgt cell 0
//  Fraction along src section: 0.73618925, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_B[1]

a_M3R[0].Neurite5 { elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.992038) }
elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_A[0].vgap, a_M2R[0].Axon.v(0.73618925)

a_M2R[0].Axon { elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.73618925) }
elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_M2R_M3R_GJ_Generic_GJ_B[0].vgap, a_M3R[0].Neurite5.v(0.992038)


// Adding NetConn: NCXLS_I6_M5_GJ from: I6 to: M5 with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.28311715, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[2]

a_M5[0].Axon { elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.2236697) }
elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[0].weight = 0.600000
setpointer elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[0].vgap, a_I6[0].Dendrite2.v(0.28311715)

a_I6[0].Dendrite2 { elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.28311715) }
elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[0].weight = 0.600000
setpointer elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Axon.v(0.2236697)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.3190765, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M5[0].Dendrite2 { elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[1] = new Generic_GJ(0.7862816) }
elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[1].weight = 0.600000
setpointer elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_A[1].vgap, a_I6[0].Axon.v(0.3190765)

a_I6[0].Axon { elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[1] = new Generic_GJ(0.3190765) }
elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[1].weight = 0.600000
setpointer elecsyn_NCXLS_I6_M5_GJ_Generic_GJ_B[1].vgap, a_M5[0].Dendrite2.v(0.7862816)


// Adding NetConn: NCXLS_M4_M2L_GJ from: M4 to: M2L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.39190543, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_B[1]

a_M2L[0].Axon { elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.72764593) }
elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_A[0].weight = 0.700000
setpointer elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_A[0].vgap, a_M4[0].Axon.v(0.39190543)

a_M4[0].Axon { elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.39190543) }
elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_B[0].weight = 0.700000
setpointer elecsyn_NCXLS_M4_M2L_GJ_Generic_GJ_B[0].vgap, a_M2L[0].Axon.v(0.72764593)


// Adding NetConn: NCXLS_I1R_I5_GJ from: I1R to: I5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.061649103, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_B[1]

a_I5[0].Neurite3 { elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.43770692) }
elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_A[0].weight = 0.600000
setpointer elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_A[0].vgap, a_I1R[0].Dendrite2.v(0.061649103)

a_I1R[0].Dendrite2 { elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.061649103) }
elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_B[0].weight = 0.600000
setpointer elecsyn_NCXLS_I1R_I5_GJ_Generic_GJ_B[0].vgap, a_I5[0].Neurite3.v(0.43770692)


// Adding NetConn: NCXLS_M3R_NSML from: M3R to: NSML with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.45003468, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_NSML_Glutamate[2]

{a_NSML[0].Axon syn_NCXLS_M3R_NSML_Glutamate[0] = new Glutamate(0.87208974)}
{a_M3R[0].Neurite4 a_NSML[0].synlist.append(new NetCon(&v(0.45003468), syn_NCXLS_M3R_NSML_Glutamate[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.7305069, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSML[0].Neurite2 syn_NCXLS_M3R_NSML_Glutamate[1] = new Glutamate(0.3977217)}
{a_M3R[0].Neurite4 a_NSML[0].synlist.append(new NetCon(&v(0.7305069), syn_NCXLS_M3R_NSML_Glutamate[1], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_I1L_I5_GJ from: I1L to: I5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.6636989, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_B[1]

a_I5[0].Neurite3 { elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.13819447) }
elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_A[0].weight = 0.400000
setpointer elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_A[0].vgap, a_I1L[0].Axon.v(0.6636989)

a_I1L[0].Axon { elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.6636989) }
elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_B[0].weight = 0.400000
setpointer elecsyn_NCXLS_I1L_I5_GJ_Generic_GJ_B[0].vgap, a_I5[0].Neurite3.v(0.13819447)


// Adding NetConn: NCXLS_M5_M5_GJ from: M5 to: M5 with 4 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite5 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.68157536, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[4]

objectvar elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[4]

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.2920413) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[0].vgap, a_M5[0].Neurite5.v(0.68157536)

a_M5[0].Neurite5 { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.68157536) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Dendrite2.v(0.2920413)


//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.44129997, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M5[0].Neurite7 { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[1] = new Generic_GJ(0.47145656) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[1].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[1].vgap, a_M5[0].Dendrite2.v(0.44129997)

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[1] = new Generic_GJ(0.44129997) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[1].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[1].vgap, a_M5[0].Neurite7.v(0.47145656)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.70929927, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M5[0].Dendrite2 { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[2] = new Generic_GJ(0.585463) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[2].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[2].vgap, a_M5[0].Axon.v(0.70929927)

a_M5[0].Axon { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[2] = new Generic_GJ(0.70929927) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[2].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[2].vgap, a_M5[0].Dendrite2.v(0.585463)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.45749056, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M5[0].Axon { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[3] = new Generic_GJ(0.46023145) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[3].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_A[3].vgap, a_M5[0].Axon.v(0.45749056)

a_M5[0].Axon { elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[3] = new Generic_GJ(0.45749056) }
elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[3].weight = 0.500000
setpointer elecsyn_NCXLS_M5_M5_GJ_Generic_GJ_B[3].vgap, a_M5[0].Axon.v(0.46023145)


// Adding NetConn: NCXLS_I1R_I1L_GJ from: I1R to: I1L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.38565555, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_B[1]

a_I1L[0].Axon { elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.45903614) }
elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_A[0].vgap, a_I1R[0].Axon.v(0.38565555)

a_I1R[0].Axon { elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.38565555) }
elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_I1R_I1L_GJ_Generic_GJ_B[0].vgap, a_I1L[0].Axon.v(0.45903614)


// Adding NetConn: NCXLS_M3L_NSMR from: M3L to: NSMR with 3 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.50570923, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_NSMR_Glutamate[3]

{a_NSMR[0].Neurite3 syn_NCXLS_M3L_NSMR_Glutamate[0] = new Glutamate(0.54818994)}
{a_M3L[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.50570923), syn_NCXLS_M3L_NSMR_Glutamate[0], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Neurite2 on tgt cell 0
//  Fraction along src section: 0.6880377, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSMR[0].Neurite2 syn_NCXLS_M3L_NSMR_Glutamate[1] = new Glutamate(0.72246355)}
{a_M3L[0].Neurite5 a_NSMR[0].synlist.append(new NetCon(&v(0.6880377), syn_NCXLS_M3L_NSMR_Glutamate[1], 0.0, 0.0, 0.000000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.30027974, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSMR[0].Axon syn_NCXLS_M3L_NSMR_Glutamate[2] = new Glutamate(0.64567065)}
{a_M3L[0].Neurite4 a_NSMR[0].synlist.append(new NetCon(&v(0.30027974), syn_NCXLS_M3L_NSMR_Glutamate[2], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_M1_I2L_GJ from: M1 to: I2L with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.73223895, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[2]

a_I2L[0].Dendrite2 { elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.85846645) }
elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[0].vgap, a_M1[0].Axon.v(0.73223895)

a_M1[0].Axon { elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.73223895) }
elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[0].vgap, a_I2L[0].Dendrite2.v(0.85846645)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.46005535, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_I2L[0].Axon { elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[1] = new Generic_GJ(0.21917856) }
elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[1].weight = 0.800000
setpointer elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_A[1].vgap, a_M1[0].Axon.v(0.46005535)

a_M1[0].Axon { elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[1] = new Generic_GJ(0.46005535) }
elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[1].weight = 0.800000
setpointer elecsyn_NCXLS_M1_I2L_GJ_Generic_GJ_B[1].vgap, a_I2L[0].Axon.v(0.21917856)


// Adding NetConn: NCXLS_M4_I6_GJ from: M4 to: I6 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.5757062, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_B[1]

a_I6[0].Dendrite2 { elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_A[0] = new Generic_GJ(0.6417691) }
elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_A[0].weight = 0.100000
setpointer elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_A[0].vgap, a_M4[0].Axon.v(0.5757062)

a_M4[0].Axon { elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_B[0] = new Generic_GJ(0.5757062) }
elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_B[0].weight = 0.100000
setpointer elecsyn_NCXLS_M4_I6_GJ_Generic_GJ_B[0].vgap, a_I6[0].Dendrite2.v(0.6417691)


// Adding NetConn: NCXLS_M2R_MI_GJ from: M2R to: MI with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.81914896, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_B[1]

a_MI[0].Axon { elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_A[0] = new Generic_GJ(0.62425816) }
elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_A[0].weight = 0.100000
setpointer elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_A[0].vgap, a_M2R[0].Axon.v(0.81914896)

a_M2R[0].Axon { elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_B[0] = new Generic_GJ(0.81914896) }
elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_B[0].weight = 0.100000
setpointer elecsyn_NCXLS_M2R_MI_GJ_Generic_GJ_B[0].vgap, a_MI[0].Axon.v(0.62425816)


// Adding NetConn: NCXLS_MCL_M1 from: MCL to: M1 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.47724798, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_M1_Acetylcholine[1]

{a_M1[0].Axon syn_NCXLS_MCL_M1_Acetylcholine[0] = new Acetylcholine(0.3178075)}
{a_MCL[0].Neurite4 a_M1[0].synlist.append(new NetCon(&v(0.47724798), syn_NCXLS_MCL_M1_Acetylcholine[0], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_M2R_I3 from: M2R to: I3 with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.82295954, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2R_I3_Acetylcholine[2]

{a_I3[0].Neurite3 syn_NCXLS_M2R_I3_Acetylcholine[0] = new Acetylcholine(0.40338376)}
{a_M2R[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.82295954), syn_NCXLS_M2R_I3_Acetylcholine[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4608313, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I3[0].Axon syn_NCXLS_M2R_I3_Acetylcholine[1] = new Acetylcholine(0.9611628)}
{a_M2R[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.4608313), syn_NCXLS_M2R_I3_Acetylcholine[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_M3L_NSML from: M3L to: NSML with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.10773742, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_NSML_Glutamate[2]

{a_NSML[0].Neurite3 syn_NCXLS_M3L_NSML_Glutamate[0] = new Glutamate(0.2980702)}
{a_M3L[0].Axon a_NSML[0].synlist.append(new NetCon(&v(0.10773742), syn_NCXLS_M3L_NSML_Glutamate[0], 0.0, 0.0, 0.700000))}


//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.59871113, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_NSML[0].Neurite3 syn_NCXLS_M3L_NSML_Glutamate[1] = new Glutamate(0.28828168)}
{a_M3L[0].Neurite4 a_NSML[0].synlist.append(new NetCon(&v(0.59871113), syn_NCXLS_M3L_NSML_Glutamate[1], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_M3L_M1 from: M3L to: M1 with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8023714, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3L_M1_Glutamate[1]

{a_M1[0].Axon syn_NCXLS_M3L_M1_Glutamate[0] = new Glutamate(0.44433874)}
{a_M3L[0].Neurite4 a_M1[0].synlist.append(new NetCon(&v(0.8023714), syn_NCXLS_M3L_M1_Glutamate[0], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_MCL_I1R from: MCL to: I1R with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.605459, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_I1R_Acetylcholine[3]

{a_I1R[0].Axon syn_NCXLS_MCL_I1R_Acetylcholine[0] = new Acetylcholine(0.44539994)}
{a_MCL[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.605459), syn_NCXLS_MCL_I1R_Acetylcholine[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.34929872, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_MCL_I1R_Acetylcholine[1] = new Acetylcholine(0.40184736)}
{a_MCL[0].Neurite4 a_I1R[0].synlist.append(new NetCon(&v(0.34929872), syn_NCXLS_MCL_I1R_Acetylcholine[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.31668717, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Dendrite2 syn_NCXLS_MCL_I1R_Acetylcholine[2] = new Acetylcholine(0.06617025)}
{a_MCL[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.31668717), syn_NCXLS_MCL_I1R_Acetylcholine[2], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_M3R_MI from: M3R to: MI with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.88455015, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_MI_Glutamate[1]

{a_MI[0].Axon syn_NCXLS_M3R_MI_Glutamate[0] = new Glutamate(0.8256189)}
{a_M3R[0].Neurite4 a_MI[0].synlist.append(new NetCon(&v(0.88455015), syn_NCXLS_M3R_MI_Glutamate[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_M4_I6 from: M4 to: I6 with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.87647116, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M4_I6_Acetylcholine[2]

{a_I6[0].Axon syn_NCXLS_M4_I6_Acetylcholine[0] = new Acetylcholine(0.9590804)}
{a_M4[0].Dendrite3 a_I6[0].synlist.append(new NetCon(&v(0.87647116), syn_NCXLS_M4_I6_Acetylcholine[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.75938183, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I6[0].Dendrite2 syn_NCXLS_M4_I6_Acetylcholine[1] = new Acetylcholine(0.64592713)}
{a_M4[0].Axon a_I6[0].synlist.append(new NetCon(&v(0.75938183), syn_NCXLS_M4_I6_Acetylcholine[1], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_MCR_M2R_GJ from: MCR to: M2R with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8072853, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[2]

a_M2R[0].Axon { elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.40078) }
elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[0].weight = 0.100000
setpointer elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[0].vgap, a_MCR[0].Dendrite2.v(0.8072853)

a_MCR[0].Dendrite2 { elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.8072853) }
elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[0].weight = 0.100000
setpointer elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.40078)


//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.21096556, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2R[0].Axon { elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[1] = new Generic_GJ(0.57528) }
elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[1].weight = 0.100000
setpointer elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_A[1].vgap, a_MCR[0].Neurite4.v(0.21096556)

a_MCR[0].Neurite4 { elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[1] = new Generic_GJ(0.21096556) }
elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[1].weight = 0.100000
setpointer elecsyn_NCXLS_MCR_M2R_GJ_Generic_GJ_B[1].vgap, a_M2R[0].Axon.v(0.57528)


// Adding NetConn: NCXLS_M4_I5 from: M4 to: I5 with 13 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite8 on tgt cell 0
//  Fraction along src section: 0.7440336, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M4_I5_Acetylcholine[13]

{a_I5[0].Neurite8 syn_NCXLS_M4_I5_Acetylcholine[0] = new Acetylcholine(0.13866313)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.7440336), syn_NCXLS_M4_I5_Acetylcholine[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite8 on tgt cell 0
//  Fraction along src section: 0.9968392, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite8 syn_NCXLS_M4_I5_Acetylcholine[1] = new Acetylcholine(0.6128447)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.9968392), syn_NCXLS_M4_I5_Acetylcholine[1], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite8 on tgt cell 0
//  Fraction along src section: 0.758277, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite8 syn_NCXLS_M4_I5_Acetylcholine[2] = new Acetylcholine(0.56449336)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.758277), syn_NCXLS_M4_I5_Acetylcholine[2], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite15 on tgt cell 0
//  Fraction along src section: 0.7120939, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite15 syn_NCXLS_M4_I5_Acetylcholine[3] = new Acetylcholine(0.834644)}
{a_M4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.7120939), syn_NCXLS_M4_I5_Acetylcholine[3], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.91277206, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M4_I5_Acetylcholine[4] = new Acetylcholine(0.35246447)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.91277206), syn_NCXLS_M4_I5_Acetylcholine[4], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite12 on tgt cell 0
//  Fraction along src section: 0.008806503, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite12 syn_NCXLS_M4_I5_Acetylcholine[5] = new Acetylcholine(0.27708426)}
{a_M4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.008806503), syn_NCXLS_M4_I5_Acetylcholine[5], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.9131678, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite6 syn_NCXLS_M4_I5_Acetylcholine[6] = new Acetylcholine(0.14052054)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.9131678), syn_NCXLS_M4_I5_Acetylcholine[6], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.19974107, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M4_I5_Acetylcholine[7] = new Acetylcholine(0.48321113)}
{a_M4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.19974107), syn_NCXLS_M4_I5_Acetylcholine[7], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.05882032, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite7 syn_NCXLS_M4_I5_Acetylcholine[8] = new Acetylcholine(0.6954355)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.05882032), syn_NCXLS_M4_I5_Acetylcholine[8], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.5891325, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite7 syn_NCXLS_M4_I5_Acetylcholine[9] = new Acetylcholine(0.24100496)}
{a_M4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.5891325), syn_NCXLS_M4_I5_Acetylcholine[9], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.78796667, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M4_I5_Acetylcholine[10] = new Acetylcholine(0.38591182)}
{a_M4[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.78796667), syn_NCXLS_M4_I5_Acetylcholine[10], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite3 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.11635451, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite6 syn_NCXLS_M4_I5_Acetylcholine[11] = new Acetylcholine(0.709273)}
{a_M4[0].Dendrite3 a_I5[0].synlist.append(new NetCon(&v(0.11635451), syn_NCXLS_M4_I5_Acetylcholine[11], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Neurite6 on tgt cell 0
//  Fraction along src section: 0.86710805, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite6 syn_NCXLS_M4_I5_Acetylcholine[12] = new Acetylcholine(0.6392051)}
{a_M4[0].Dendrite2 a_I5[0].synlist.append(new NetCon(&v(0.86710805), syn_NCXLS_M4_I5_Acetylcholine[12], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_MCL_I1L from: MCL to: I1L with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.5610151, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCL_I1L_Acetylcholine[3]

{a_I1L[0].Dendrite2 syn_NCXLS_MCL_I1L_Acetylcholine[0] = new Acetylcholine(0.19133462)}
{a_MCL[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.5610151), syn_NCXLS_MCL_I1L_Acetylcholine[0], 0.0, 0.0, 0.600000))}


//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.21329533, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_MCL_I1L_Acetylcholine[1] = new Acetylcholine(0.2843007)}
{a_MCL[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.21329533), syn_NCXLS_MCL_I1L_Acetylcholine[1], 0.0, 0.0, 0.600000))}


//  Syn conn (type: Acetylcholine) from Neurite4 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.12207293, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_MCL_I1L_Acetylcholine[2] = new Acetylcholine(0.85432315)}
{a_MCL[0].Neurite4 a_I1L[0].synlist.append(new NetCon(&v(0.12207293), syn_NCXLS_MCL_I1L_Acetylcholine[2], 0.0, 0.0, 0.600000))}


// Adding NetConn: NCXLS_M4_I3 from: M4 to: I3 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.83208025, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M4_I3_Acetylcholine[1]

{a_I3[0].Dendrite2 syn_NCXLS_M4_I3_Acetylcholine[0] = new Acetylcholine(0.054911688)}
{a_M4[0].Axon a_I3[0].synlist.append(new NetCon(&v(0.83208025), syn_NCXLS_M4_I3_Acetylcholine[0], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_I5_M5_GJ from: I5 to: M5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.558441, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_B[1]

a_M5[0].Dendrite2 { elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.93457264) }
elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_A[0].weight = 0.400000
setpointer elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_A[0].vgap, a_I5[0].Neurite3.v(0.558441)

a_I5[0].Neurite3 { elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.558441) }
elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_B[0].weight = 0.400000
setpointer elecsyn_NCXLS_I5_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Dendrite2.v(0.93457264)


// Adding NetConn: NCXLS_M2L_MI from: M2L to: MI with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5407091, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2L_MI_Acetylcholine[2]

{a_MI[0].Axon syn_NCXLS_M2L_MI_Acetylcholine[0] = new Acetylcholine(0.2669751)}
{a_M2L[0].Axon a_MI[0].synlist.append(new NetCon(&v(0.5407091), syn_NCXLS_M2L_MI_Acetylcholine[0], 0.0, 0.0, 0.600000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6463555, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_MI[0].Axon syn_NCXLS_M2L_MI_Acetylcholine[1] = new Acetylcholine(0.9545342)}
{a_M2L[0].Axon a_MI[0].synlist.append(new NetCon(&v(0.6463555), syn_NCXLS_M2L_MI_Acetylcholine[1], 0.0, 0.0, 0.600000))}


// Adding NetConn: NCXLS_M5_I5 from: M5 to: I5 with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.88854635, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M5_I5_Acetylcholine[3]

{a_I5[0].Neurite7 syn_NCXLS_M5_I5_Acetylcholine[0] = new Acetylcholine(0.17491917)}
{a_M5[0].Dendrite2 a_I5[0].synlist.append(new NetCon(&v(0.88854635), syn_NCXLS_M5_I5_Acetylcholine[0], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Dendrite2 on src cell 0 to Neurite3 on tgt cell 0
//  Fraction along src section: 0.8378018, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite3 syn_NCXLS_M5_I5_Acetylcholine[1] = new Acetylcholine(0.7493018)}
{a_M5[0].Dendrite2 a_I5[0].synlist.append(new NetCon(&v(0.8378018), syn_NCXLS_M5_I5_Acetylcholine[1], 0.0, 0.0, 0.900000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Neurite9 on tgt cell 0
//  Fraction along src section: 0.98165673, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite9 syn_NCXLS_M5_I5_Acetylcholine[2] = new Acetylcholine(0.39011222)}
{a_M5[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.98165673), syn_NCXLS_M5_I5_Acetylcholine[2], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_I5_MI from: I5 to: MI with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.88273245, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I5_MI_Serotonin_Glutamate[2]

{a_MI[0].Axon syn_NCXLS_I5_MI_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.45008782)}
{a_I5[0].Neurite2 a_MI[0].synlist.append(new NetCon(&v(0.88273245), syn_NCXLS_I5_MI_Serotonin_Glutamate[0], 0.0, 0.0, 0.700000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite6 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.03256802, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_MI[0].Axon syn_NCXLS_I5_MI_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.9963989)}
{a_I5[0].Neurite6 a_MI[0].synlist.append(new NetCon(&v(0.03256802), syn_NCXLS_I5_MI_Serotonin_Glutamate[1], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_M4_M2R_GJ from: M4 to: M2R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.98041415, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_B[1]

a_M2R[0].Axon { elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.14857435) }
elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_A[0].vgap, a_M4[0].Dendrite3.v(0.98041415)

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.98041415) }
elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_M4_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.14857435)


// Adding NetConn: NCXLS_MCL_M2L_GJ from: MCL to: M2L with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.95358366, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[2]

a_M2L[0].Axon { elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.06399733) }
elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[0].weight = 0.900000
setpointer elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[0].vgap, a_MCL[0].Axon.v(0.95358366)

a_MCL[0].Axon { elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.95358366) }
elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[0].weight = 0.900000
setpointer elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[0].vgap, a_M2L[0].Axon.v(0.06399733)


//  Syn conn (type: Generic_GJ) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.87380993, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2L[0].Axon { elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[1] = new Generic_GJ(0.33917987) }
elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[1].weight = 0.900000
setpointer elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_A[1].vgap, a_MCL[0].Neurite3.v(0.87380993)

a_MCL[0].Neurite3 { elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[1] = new Generic_GJ(0.87380993) }
elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[1].weight = 0.900000
setpointer elecsyn_NCXLS_MCL_M2L_GJ_Generic_GJ_B[1].vgap, a_M2L[0].Axon.v(0.33917987)


// Adding NetConn: NCXLS_I5_I1L_GJ from: I5 to: I1L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite6 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.70477116, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_B[1]

a_I1L[0].Dendrite2 { elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.04328244) }
elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_A[0].vgap, a_I5[0].Neurite6.v(0.70477116)

a_I5[0].Neurite6 { elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.70477116) }
elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_I5_I1L_GJ_Generic_GJ_B[0].vgap, a_I1L[0].Dendrite2.v(0.04328244)


// Adding NetConn: NCXLS_M1_I2R_GJ from: M1 to: I2R with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.25126165, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[2]

a_I2R[0].Dendrite2 { elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.107741095) }
elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[0].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[0].vgap, a_M1[0].Axon.v(0.25126165)

a_M1[0].Axon { elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.25126165) }
elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[0].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[0].vgap, a_I2R[0].Dendrite2.v(0.107741095)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.7957179, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_I2R[0].Axon { elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[1] = new Generic_GJ(0.6860769) }
elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[1].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_A[1].vgap, a_M1[0].Axon.v(0.7957179)

a_M1[0].Axon { elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[1] = new Generic_GJ(0.7957179) }
elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[1].weight = 0.400000
setpointer elecsyn_NCXLS_M1_I2R_GJ_Generic_GJ_B[1].vgap, a_I2R[0].Axon.v(0.6860769)


// Adding NetConn: NCXLS_MCR_M1 from: MCR to: M1 with 1 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.29461655, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_MCR_M1_Acetylcholine[1]

{a_M1[0].Axon syn_NCXLS_MCR_M1_Acetylcholine[0] = new Acetylcholine(0.5065963)}
{a_MCR[0].Neurite3 a_M1[0].synlist.append(new NetCon(&v(0.29461655), syn_NCXLS_MCR_M1_Acetylcholine[0], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_I3_M1 from: I3 to: M1 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.39947417, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I3_M1_Glutamate[2]

{a_M1[0].Axon syn_NCXLS_I3_M1_Glutamate[0] = new Glutamate(0.84437406)}
{a_I3[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.39947417), syn_NCXLS_I3_M1_Glutamate[0], 0.0, 0.0, 0.500000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.4352302, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_M1[0].Axon syn_NCXLS_I3_M1_Glutamate[1] = new Glutamate(0.89218724)}
{a_I3[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.4352302), syn_NCXLS_I3_M1_Glutamate[1], 0.0, 0.0, 0.500000))}


// Adding NetConn: NCXLS_M2R_I3_GJ from: M2R to: I3 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.78544736, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_B[1]

a_I3[0].Axon { elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_A[0] = new Generic_GJ(0.8547067) }
elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_A[0].weight = 0.800000
setpointer elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_A[0].vgap, a_M2R[0].Axon.v(0.78544736)

a_M2R[0].Axon { elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_B[0] = new Generic_GJ(0.78544736) }
elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_B[0].weight = 0.800000
setpointer elecsyn_NCXLS_M2R_I3_GJ_Generic_GJ_B[0].vgap, a_I3[0].Axon.v(0.8547067)


// Adding NetConn: NCXLS_M3R_M1 from: M3R to: M1 with 1 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Neurite5 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.61592907, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M3R_M1_Glutamate[1]

{a_M1[0].Axon syn_NCXLS_M3R_M1_Glutamate[0] = new Glutamate(0.6327862)}
{a_M3R[0].Neurite5 a_M1[0].synlist.append(new NetCon(&v(0.61592907), syn_NCXLS_M3R_M1_Glutamate[0], 0.0, 0.0, 0.900000))}


// Adding NetConn: NCXLS_NSML_I6 from: NSML to: I6 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.30217105, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I6_Serotonin_Glutamate[2]

{a_I6[0].Axon syn_NCXLS_NSML_I6_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.5245272)}
{a_NSML[0].Neurite2 a_I6[0].synlist.append(new NetCon(&v(0.30217105), syn_NCXLS_NSML_I6_Serotonin_Glutamate[0], 0.0, 0.0, 0.700000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.6139545, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I6[0].Dendrite2 syn_NCXLS_NSML_I6_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.096196786)}
{a_NSML[0].Neurite3 a_I6[0].synlist.append(new NetCon(&v(0.6139545), syn_NCXLS_NSML_I6_Serotonin_Glutamate[1], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_NSML_I5 from: NSML to: I5 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Axon on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.60361034, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I5_Serotonin_Glutamate[2]

{a_I5[0].Neurite7 syn_NCXLS_NSML_I5_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.11404836)}
{a_NSML[0].Axon a_I5[0].synlist.append(new NetCon(&v(0.60361034), syn_NCXLS_NSML_I5_Serotonin_Glutamate[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Neurite7 on tgt cell 0
//  Fraction along src section: 0.22748159, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I5[0].Neurite7 syn_NCXLS_NSML_I5_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.31844315)}
{a_NSML[0].Neurite2 a_I5[0].synlist.append(new NetCon(&v(0.22748159), syn_NCXLS_NSML_I5_Serotonin_Glutamate[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_M4_M4_GJ from: M4 to: M4 with 6 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.81606793, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[6]

objectvar elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[6]

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[0] = new Generic_GJ(0.06353129) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[0].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[0].vgap, a_M4[0].Axon.v(0.81606793)

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[0] = new Generic_GJ(0.81606793) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[0].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[0].vgap, a_M4[0].Axon.v(0.06353129)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite3 on tgt cell 0
//  Fraction along src section: 0.632281, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[1] = new Generic_GJ(0.7142434) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[1].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[1].vgap, a_M4[0].Axon.v(0.632281)

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[1] = new Generic_GJ(0.632281) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[1].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[1].vgap, a_M4[0].Dendrite3.v(0.7142434)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.38507313, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[2] = new Generic_GJ(0.73090684) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[2].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[2].vgap, a_M4[0].Axon.v(0.38507313)

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[2] = new Generic_GJ(0.38507313) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[2].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[2].vgap, a_M4[0].Axon.v(0.73090684)


//  Syn conn (type: Generic_GJ) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.2513414, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[3] = new Generic_GJ(0.1647888) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[3].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[3].vgap, a_M4[0].Dendrite3.v(0.2513414)

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[3] = new Generic_GJ(0.2513414) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[3].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[3].vgap, a_M4[0].Axon.v(0.1647888)


//  Syn conn (type: Generic_GJ) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.23673435, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[4] = new Generic_GJ(0.46358976) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[4].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[4].vgap, a_M4[0].Dendrite3.v(0.23673435)

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[4] = new Generic_GJ(0.23673435) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[4].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[4].vgap, a_M4[0].Axon.v(0.46358976)


//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite3 on tgt cell 0
//  Fraction along src section: 0.20105435, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[5] = new Generic_GJ(0.22626787) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[5].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_A[5].vgap, a_M4[0].Axon.v(0.20105435)

a_M4[0].Axon { elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[5] = new Generic_GJ(0.20105435) }
elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[5].weight = 0.900000
setpointer elecsyn_NCXLS_M4_M4_GJ_Generic_GJ_B[5].vgap, a_M4[0].Dendrite3.v(0.22626787)


// Adding NetConn: NCXLS_I4_M1 from: I4 to: M1 with 2 connections
// each with syn(s): [Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Glutamate) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.88231933, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I4_M1_Glutamate[2]

{a_M1[0].Axon syn_NCXLS_I4_M1_Glutamate[0] = new Glutamate(0.712886)}
{a_I4[0].Axon a_M1[0].synlist.append(new NetCon(&v(0.88231933), syn_NCXLS_I4_M1_Glutamate[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Glutamate) from Dendrite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8993436, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_M1[0].Axon syn_NCXLS_I4_M1_Glutamate[1] = new Glutamate(0.09649083)}
{a_I4[0].Dendrite2 a_M1[0].synlist.append(new NetCon(&v(0.8993436), syn_NCXLS_I4_M1_Glutamate[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_NSML_I4 from: NSML to: I4 with 3 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.8640606, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I4_Serotonin_Glutamate[3]

{a_I4[0].Axon syn_NCXLS_NSML_I4_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.67561406)}
{a_NSML[0].Neurite2 a_I4[0].synlist.append(new NetCon(&v(0.8640606), syn_NCXLS_NSML_I4_Serotonin_Glutamate[0], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5393446, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_NSML_I4_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.33441296)}
{a_NSML[0].Neurite2 a_I4[0].synlist.append(new NetCon(&v(0.5393446), syn_NCXLS_NSML_I4_Serotonin_Glutamate[1], 0.0, 0.0, 0.400000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.3803868, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I4[0].Axon syn_NCXLS_NSML_I4_Serotonin_Glutamate[2] = new Serotonin_Glutamate(0.10494159)}
{a_NSML[0].Neurite3 a_I4[0].synlist.append(new NetCon(&v(0.3803868), syn_NCXLS_NSML_I4_Serotonin_Glutamate[2], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_I5_M5 from: I5 to: M5 with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite7 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.96341974, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I5_M5_Serotonin_Glutamate[1]

{a_M5[0].Dendrite2 syn_NCXLS_I5_M5_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.22737323)}
{a_I5[0].Neurite7 a_M5[0].synlist.append(new NetCon(&v(0.96341974), syn_NCXLS_I5_M5_Serotonin_Glutamate[0], 0.0, 0.0, 0.400000))}


// Adding NetConn: NCXLS_NSML_I3 from: NSML to: I3 with 2 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.21800429, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSML_I3_Serotonin_Glutamate[2]

{a_I3[0].Dendrite2 syn_NCXLS_NSML_I3_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.2163639)}
{a_NSML[0].Neurite2 a_I3[0].synlist.append(new NetCon(&v(0.21800429), syn_NCXLS_NSML_I3_Serotonin_Glutamate[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.8569612, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I3[0].Dendrite2 syn_NCXLS_NSML_I3_Serotonin_Glutamate[1] = new Serotonin_Glutamate(0.43353748)}
{a_NSML[0].Neurite2 a_I3[0].synlist.append(new NetCon(&v(0.8569612), syn_NCXLS_NSML_I3_Serotonin_Glutamate[1], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_NSMR_M3R from: NSMR to: M3R with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite2 on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.18657732, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_M3R_Serotonin_Glutamate[1]

{a_M3R[0].Neurite4 syn_NCXLS_NSMR_M3R_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.53801066)}
{a_NSMR[0].Neurite2 a_M3R[0].synlist.append(new NetCon(&v(0.18657732), syn_NCXLS_NSMR_M3R_Serotonin_Glutamate[0], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_M4_M5_GJ from: M4 to: M5 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Dendrite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.60578674, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_B[1]

a_M5[0].Axon { elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_A[0] = new Generic_GJ(0.87881935) }
elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_A[0].weight = 0.300000
setpointer elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_A[0].vgap, a_M4[0].Dendrite3.v(0.60578674)

a_M4[0].Dendrite3 { elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_B[0] = new Generic_GJ(0.60578674) }
elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_B[0].weight = 0.300000
setpointer elecsyn_NCXLS_M4_M5_GJ_Generic_GJ_B[0].vgap, a_M5[0].Axon.v(0.87881935)


// Adding NetConn: NCXLS_I5_M1 from: I5 to: M1 with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.86948985, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I5_M1_Serotonin_Glutamate[1]

{a_M1[0].Axon syn_NCXLS_I5_M1_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.827294)}
{a_I5[0].Neurite3 a_M1[0].synlist.append(new NetCon(&v(0.86948985), syn_NCXLS_I5_M1_Serotonin_Glutamate[0], 0.0, 0.0, 0.700000))}


// Adding NetConn: NCXLS_I6_I2R from: I6 to: I2R with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.69279516, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I6_I2R_Acetylcholine[2]

{a_I2R[0].Axon syn_NCXLS_I6_I2R_Acetylcholine[0] = new Acetylcholine(0.88154954)}
{a_I6[0].Axon a_I2R[0].synlist.append(new NetCon(&v(0.69279516), syn_NCXLS_I6_I2R_Acetylcholine[0], 0.0, 0.0, 0.300000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.47154048, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2R[0].Axon syn_NCXLS_I6_I2R_Acetylcholine[1] = new Acetylcholine(0.5297932)}
{a_I6[0].Axon a_I2R[0].synlist.append(new NetCon(&v(0.47154048), syn_NCXLS_I6_I2R_Acetylcholine[1], 0.0, 0.0, 0.300000))}


// Adding NetConn: NCXLS_NSMR_M3L from: NSMR to: M3L with 1 connections
// each with syn(s): [Serotonin_Glutamate [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Serotonin_Glutamate) from Neurite3 on src cell 0 to Neurite5 on tgt cell 0
//  Fraction along src section: 0.03668803, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_NSMR_M3L_Serotonin_Glutamate[1]

{a_M3L[0].Neurite5 syn_NCXLS_NSMR_M3L_Serotonin_Glutamate[0] = new Serotonin_Glutamate(0.2128101)}
{a_NSMR[0].Neurite3 a_M3L[0].synlist.append(new NetCon(&v(0.03668803), syn_NCXLS_NSMR_M3L_Serotonin_Glutamate[0], 0.0, 0.0, 0.000000))}


// Adding NetConn: NCXLS_M2R_MI from: M2R to: MI with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.46611708, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2R_MI_Acetylcholine[2]

{a_MI[0].Axon syn_NCXLS_M2R_MI_Acetylcholine[0] = new Acetylcholine(0.5936909)}
{a_M2R[0].Axon a_MI[0].synlist.append(new NetCon(&v(0.46611708), syn_NCXLS_M2R_MI_Acetylcholine[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.6921405, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_MI[0].Axon syn_NCXLS_M2R_MI_Acetylcholine[1] = new Acetylcholine(0.8016099)}
{a_M2R[0].Axon a_MI[0].synlist.append(new NetCon(&v(0.6921405), syn_NCXLS_M2R_MI_Acetylcholine[1], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_M2R_I1R from: M2R to: I1R with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.5709569, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2R_I1R_Acetylcholine[3]

{a_I1R[0].Dendrite2 syn_NCXLS_M2R_I1R_Acetylcholine[0] = new Acetylcholine(0.35720682)}
{a_M2R[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.5709569), syn_NCXLS_M2R_I1R_Acetylcholine[0], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.013853432, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M2R_I1R_Acetylcholine[1] = new Acetylcholine(0.5563206)}
{a_M2R[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.013853432), syn_NCXLS_M2R_I1R_Acetylcholine[1], 0.0, 0.0, 0.100000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5730267, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1R[0].Axon syn_NCXLS_M2R_I1R_Acetylcholine[2] = new Acetylcholine(0.2242165)}
{a_M2R[0].Axon a_I1R[0].synlist.append(new NetCon(&v(0.5730267), syn_NCXLS_M2R_I1R_Acetylcholine[2], 0.0, 0.0, 0.100000))}


// Adding NetConn: NCXLS_M3R_MCL_GJ from: M3R to: MCL with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Neurite4 on tgt cell 0
//  Fraction along src section: 0.058056735, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_B[1]

a_MCL[0].Neurite4 { elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_A[0] = new Generic_GJ(0.6072145) }
elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_A[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_A[0].vgap, a_M3R[0].Neurite4.v(0.058056735)

a_M3R[0].Neurite4 { elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_B[0] = new Generic_GJ(0.058056735) }
elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_B[0].weight = 0.500000
setpointer elecsyn_NCXLS_M3R_MCL_GJ_Generic_GJ_B[0].vgap, a_MCL[0].Neurite4.v(0.6072145)


// Adding NetConn: NCXLS_I6_I2L from: I6 to: I2L with 2 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.1646542, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_I6_I2L_Acetylcholine[2]

{a_I2L[0].Axon syn_NCXLS_I6_I2L_Acetylcholine[0] = new Acetylcholine(0.6147645)}
{a_I6[0].Axon a_I2L[0].synlist.append(new NetCon(&v(0.1646542), syn_NCXLS_I6_I2L_Acetylcholine[0], 0.0, 0.0, 0.800000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.66415316, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I2L[0].Axon syn_NCXLS_I6_I2L_Acetylcholine[1] = new Acetylcholine(0.6711591)}
{a_I6[0].Axon a_I2L[0].synlist.append(new NetCon(&v(0.66415316), syn_NCXLS_I6_I2L_Acetylcholine[1], 0.0, 0.0, 0.800000))}


// Adding NetConn: NCXLS_M3R_M3L_GJ from: M3R to: M3L with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite5 on src cell 0 to Neurite5 on tgt cell 0
//  Fraction along src section: 0.40147516, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_B[1]

a_M3L[0].Neurite5 { elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_A[0] = new Generic_GJ(0.46227655) }
elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_A[0].weight = 0.200000
setpointer elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_A[0].vgap, a_M3R[0].Neurite5.v(0.40147516)

a_M3R[0].Neurite5 { elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_B[0] = new Generic_GJ(0.40147516) }
elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_B[0].weight = 0.200000
setpointer elecsyn_NCXLS_M3R_M3L_GJ_Generic_GJ_B[0].vgap, a_M3L[0].Neurite5.v(0.46227655)


// Adding NetConn: NCXLS_M2R_I1L from: M2R to: I1L with 3 connections
// each with syn(s): [Acetylcholine [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.40068278, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar syn_NCXLS_M2R_I1L_Acetylcholine[3]

{a_I1L[0].Axon syn_NCXLS_M2R_I1L_Acetylcholine[0] = new Acetylcholine(0.79132605)}
{a_M2R[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.40068278), syn_NCXLS_M2R_I1L_Acetylcholine[0], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.85905355, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Dendrite2 syn_NCXLS_M2R_I1L_Acetylcholine[1] = new Acetylcholine(0.24493596)}
{a_M2R[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.85905355), syn_NCXLS_M2R_I1L_Acetylcholine[1], 0.0, 0.0, 0.200000))}


//  Syn conn (type: Acetylcholine) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.97120774, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

{a_I1L[0].Axon syn_NCXLS_M2R_I1L_Acetylcholine[2] = new Acetylcholine(0.095429525)}
{a_M2R[0].Axon a_I1L[0].synlist.append(new NetCon(&v(0.97120774), syn_NCXLS_M2R_I1L_Acetylcholine[2], 0.0, 0.0, 0.200000))}


// Adding NetConn: NCXLS_MCL_M2R_GJ from: MCL to: M2R with 2 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.1774661, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[2]

objectvar elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[2]

a_M2R[0].Axon { elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.11218929) }
elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[0].weight = 0.200000
setpointer elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[0].vgap, a_MCL[0].Neurite4.v(0.1774661)

a_MCL[0].Neurite4 { elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.1774661) }
elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[0].weight = 0.200000
setpointer elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[0].vgap, a_M2R[0].Axon.v(0.11218929)


//  Syn conn (type: Generic_GJ) from Neurite4 on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.17659654, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

a_M2R[0].Axon { elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[1] = new Generic_GJ(0.31289706) }
elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[1].weight = 0.200000
setpointer elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_A[1].vgap, a_MCL[0].Neurite4.v(0.17659654)

a_MCL[0].Neurite4 { elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[1] = new Generic_GJ(0.17659654) }
elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[1].weight = 0.200000
setpointer elecsyn_NCXLS_MCL_M2R_GJ_Generic_GJ_B[1].vgap, a_M2R[0].Axon.v(0.31289706)


// Adding NetConn: NCXLS_I5_I1R_GJ from: I5 to: I1R with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Axon on tgt cell 0
//  Fraction along src section: 0.5782856, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_B[1]

a_I1R[0].Axon { elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_A[0] = new Generic_GJ(0.43931875) }
elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_A[0].weight = 0.000000
setpointer elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_A[0].vgap, a_I5[0].Axon.v(0.5782856)

a_I5[0].Axon { elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_B[0] = new Generic_GJ(0.5782856) }
elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_B[0].weight = 0.000000
setpointer elecsyn_NCXLS_I5_I1R_GJ_Generic_GJ_B[0].vgap, a_I1R[0].Axon.v(0.43931875)


// Adding NetConn: NCXLS_M2L_I3_GJ from: M2L to: I3 with 1 connections
// each with syn(s): [Generic_GJ [thresh: 0.0, delay: 0, weight: 1]]

//  Syn conn (type: Generic_GJ) from Axon on src cell 0 to Dendrite2 on tgt cell 0
//  Fraction along src section: 0.5087044, weight: 1.0
//  Delay due to AP prop along segs: 0.0, delay due to AP jump pre -> post 3D location 0.0
//  Internal synapse delay (from Synaptic Props): 0.0, TOTAL delay: 0.0

objectvar elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_A[1]

objectvar elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_B[1]

a_I3[0].Dendrite2 { elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_A[0] = new Generic_GJ(0.4646608) }
elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_A[0].weight = 0.700000
setpointer elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_A[0].vgap, a_M2L[0].Axon.v(0.5087044)

a_M2L[0].Axon { elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_B[0] = new Generic_GJ(0.5087044) }
elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_B[0].weight = 0.700000
setpointer elecsyn_NCXLS_M2L_I3_GJ_Generic_GJ_B[0].vgap, a_I3[0].Dendrite2.v(0.4646608)


//////////////////////////////////////////////////////////////////////
//   Adding 8 stimulation(s)
//////////////////////////////////////////////////////////////////////

{ n_stim_Input_I2L = 1 }
objectvar stim_Input_I2L[n_stim_Input_I2L]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_I2L[0].Soma {
    stim_Input_I2L[0] = new CurrentClampVariable(0.5)
    stim_Input_I2L[0].del = 67.322197
    stim_Input_I2L[0].dur = 73.278337
}

{ n_stim_Input_I2R = 1 }
objectvar stim_Input_I2R[n_stim_Input_I2R]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_I2R[0].Soma {
    stim_Input_I2R[0] = new CurrentClampVariable(0.5)
    stim_Input_I2R[0].del = 32.021538
    stim_Input_I2R[0].dur = 63.460299
}

{ n_stim_Input_M2L = 1 }
objectvar stim_Input_M2L[n_stim_Input_M2L]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_M2L[0].Soma {
    stim_Input_M2L[0] = new CurrentClampVariable(0.5)
    stim_Input_M2L[0].del = 41.012306
    stim_Input_M2L[0].dur = 115.186532
}

{ n_stim_Input_M2R = 1 }
objectvar stim_Input_M2R[n_stim_Input_M2R]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_M2R[0].Soma {
    stim_Input_M2R[0] = new CurrentClampVariable(0.5)
    stim_Input_M2R[0].del = 22.895341
    stim_Input_M2R[0].dur = 93.569152
}

{ n_stim_Input_M4 = 1 }
objectvar stim_Input_M4[n_stim_Input_M4]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_M4[0].Soma {
    stim_Input_M4[0] = new CurrentClampVariable(0.5)
    stim_Input_M4[0].del = 76.754385
    stim_Input_M4[0].dur = 95.012636
}

{ n_stim_Input_MI = 1 }
objectvar stim_Input_MI[n_stim_Input_MI]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_MI[0].Soma {
    stim_Input_MI[0] = new CurrentClampVariable(0.5)
    stim_Input_MI[0].del = 77.996776
    stim_Input_MI[0].dur = 82.532124
}

{ n_stim_Input_NSML = 1 }
objectvar stim_Input_NSML[n_stim_Input_NSML]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_NSML[0].Soma {
    stim_Input_NSML[0] = new CurrentClampVariable(0.5)
    stim_Input_NSML[0].del = 70.409991
    stim_Input_NSML[0].dur = 115.414204
}

{ n_stim_Input_NSMR = 1 }
objectvar stim_Input_NSMR[n_stim_Input_NSMR]


//  Note: the stimulation was specified as being at a point 0.5 along segment: Seg0_soma_0

//  in section: Soma. For NEURON, this translates to a point 0.5 along section: Soma

a_NSMR[0].Soma {
    stim_Input_NSMR[0] = new CurrentClampVariable(0.5)
    stim_Input_NSMR[0].del = 66.255833
    stim_Input_NSMR[0].dur = 117.114313
}


access I1L[0].Soma

//////////////////////////////////////////////////////////////////////
//   Settings for running the demo
//////////////////////////////////////////////////////////////////////


tstop = 100.0
dt = 0.025
steps_per_ms = 40.0

//////////////////////////////////////////////////////////////////////
//   This will run a full simulation of 4001 steps when the hoc file is executed
//////////////////////////////////////////////////////////////////////


//  Recording 20 variable(s)

objref v_time
objref f_time
objref propsFile

v_time = new Vector()
{ v_time.record(&t) }
{ v_time.resize(4001) } // false
f_time = new File()


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I1L


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I1L_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I1L_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I1L_seg_Seg0_soma_0_v[i].record(&a_I1L[i].Soma.v(0.5))} 
    { v_I1L_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I1L_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I1R


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I1R_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I1R_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I1R_seg_Seg0_soma_0_v[i].record(&a_I1R[i].Soma.v(0.5))} 
    { v_I1R_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I1R_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I2L


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I2L_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I2L_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I2L_seg_Seg0_soma_0_v[i].record(&a_I2L[i].Soma.v(0.5))} 
    { v_I2L_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I2L_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I2R


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I2R_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I2R_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I2R_seg_Seg0_soma_0_v[i].record(&a_I2R[i].Soma.v(0.5))} 
    { v_I2R_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I2R_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I3


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I3_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I3_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I3_seg_Seg0_soma_0_v[i].record(&a_I3[i].Soma.v(0.5))} 
    { v_I3_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I3_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I4


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I4_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I4_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I4_seg_Seg0_soma_0_v[i].record(&a_I4[i].Soma.v(0.5))} 
    { v_I4_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I4_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I5


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I5_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I5_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I5_seg_Seg0_soma_0_v[i].record(&a_I5[i].Soma.v(0.5))} 
    { v_I5_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I5_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I6


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_I6_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_I6_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_I6_seg_Seg0_soma_0_v[i].record(&a_I6[i].Soma.v(0.5))} 
    { v_I6_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_I6_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M1


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M1_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M1_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M1_seg_Seg0_soma_0_v[i].record(&a_M1[i].Soma.v(0.5))} 
    { v_M1_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M1_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M2L


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M2L_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M2L_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M2L_seg_Seg0_soma_0_v[i].record(&a_M2L[i].Soma.v(0.5))} 
    { v_M2L_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M2L_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M2R


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M2R_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M2R_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M2R_seg_Seg0_soma_0_v[i].record(&a_M2R[i].Soma.v(0.5))} 
    { v_M2R_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M2R_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M3L


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M3L_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M3L_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M3L_seg_Seg0_soma_0_v[i].record(&a_M3L[i].Soma.v(0.5))} 
    { v_M3L_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M3L_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M3R


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M3R_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M3R_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M3R_seg_Seg0_soma_0_v[i].record(&a_M3R[i].Soma.v(0.5))} 
    { v_M3R_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M3R_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M4


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M4_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M4_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M4_seg_Seg0_soma_0_v[i].record(&a_M4[i].Soma.v(0.5))} 
    { v_M4_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M4_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M5


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_M5_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_M5_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_M5_seg_Seg0_soma_0_v[i].record(&a_M5[i].Soma.v(0.5))} 
    { v_M5_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_M5_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MCL


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_MCL_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_MCL_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_MCL_seg_Seg0_soma_0_v[i].record(&a_MCL[i].Soma.v(0.5))} 
    { v_MCL_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_MCL_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MCR


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_MCR_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_MCR_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_MCR_seg_Seg0_soma_0_v[i].record(&a_MCR[i].Soma.v(0.5))} 
    { v_MCR_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_MCR_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MI


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_MI_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_MI_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_MI_seg_Seg0_soma_0_v[i].record(&a_MI[i].Soma.v(0.5))} 
    { v_MI_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_MI_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in NSML


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_NSML_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_NSML_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_NSML_seg_Seg0_soma_0_v[i].record(&a_NSML[i].Soma.v(0.5))} 
    { v_NSML_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_NSML_seg_Seg0_soma_0_v[1]


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in NSMR


//  Creating vector for segment: Seg0_soma_0(ID: 0)

objref v_NSMR_seg_Seg0_soma_0_v[1]
for i=0, 0 {
    { v_NSMR_seg_Seg0_soma_0_v[i] = new Vector() }
    { v_NSMR_seg_Seg0_soma_0_v[i].record(&a_NSMR[i].Soma.v(0.5))} 
    { v_NSMR_seg_Seg0_soma_0_v[i].resize(4001) }
}
objref f_NSMR_seg_Seg0_soma_0_v[1]

strdef simReference
simReference = "."



strdef simsDir
simsDir = "./"


//  Note: to change location of the generated simulation files, just change value of targetDir
//  e.g. targetDir="" or targetDir="aSubDir/"

strdef targetDir
{ sprint(targetDir, "%s%s/", simsDir, simReference)}


//  Single simulation run...

strdef date
// Note: not showing date/time of start/stop of simulation. This requires Cygwin to be installed// which includes the "date" unix command. Install under c:\cygwin

setuptime = stopsw()

print "Setup time for simulation: ",setuptime," seconds"

print "Starting simulation of duration ",tstop,"ms, dt: ",dt,"ms, reference: ",simReference,""

{currenttime = startsw()}
//////////////////////////////////////////////////////////////////////
//   Main run statement
//////////////////////////////////////////////////////////////////////

{run()}

{realruntime = startsw() - currenttime}
print "Finished simulation in ", realruntime ,"seconds"

print "Storing the data..."

strdef timeFilename

//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I1L


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I1L_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI1L_%d.dat", targetDir, i)}
    f_I1L_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I1L_seg_Seg0_soma_0_v[i].printf(f_I1L_seg_Seg0_soma_0_v[i])
    f_I1L_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I1R


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I1R_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI1R_%d.dat", targetDir, i)}
    f_I1R_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I1R_seg_Seg0_soma_0_v[i].printf(f_I1R_seg_Seg0_soma_0_v[i])
    f_I1R_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I2L


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I2L_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI2L_%d.dat", targetDir, i)}
    f_I2L_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I2L_seg_Seg0_soma_0_v[i].printf(f_I2L_seg_Seg0_soma_0_v[i])
    f_I2L_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I2R


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I2R_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI2R_%d.dat", targetDir, i)}
    f_I2R_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I2R_seg_Seg0_soma_0_v[i].printf(f_I2R_seg_Seg0_soma_0_v[i])
    f_I2R_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I3


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I3_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI3_%d.dat", targetDir, i)}
    f_I3_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I3_seg_Seg0_soma_0_v[i].printf(f_I3_seg_Seg0_soma_0_v[i])
    f_I3_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I4


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I4_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI4_%d.dat", targetDir, i)}
    f_I4_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I4_seg_Seg0_soma_0_v[i].printf(f_I4_seg_Seg0_soma_0_v[i])
    f_I4_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I5


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I5_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI5_%d.dat", targetDir, i)}
    f_I5_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I5_seg_Seg0_soma_0_v[i].printf(f_I5_seg_Seg0_soma_0_v[i])
    f_I5_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in I6


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_I6_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sI6_%d.dat", targetDir, i)}
    f_I6_seg_Seg0_soma_0_v[i].wopen(filename)
    v_I6_seg_Seg0_soma_0_v[i].printf(f_I6_seg_Seg0_soma_0_v[i])
    f_I6_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M1


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M1_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM1_%d.dat", targetDir, i)}
    f_M1_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M1_seg_Seg0_soma_0_v[i].printf(f_M1_seg_Seg0_soma_0_v[i])
    f_M1_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M2L


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M2L_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM2L_%d.dat", targetDir, i)}
    f_M2L_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M2L_seg_Seg0_soma_0_v[i].printf(f_M2L_seg_Seg0_soma_0_v[i])
    f_M2L_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M2R


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M2R_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM2R_%d.dat", targetDir, i)}
    f_M2R_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M2R_seg_Seg0_soma_0_v[i].printf(f_M2R_seg_Seg0_soma_0_v[i])
    f_M2R_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M3L


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M3L_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM3L_%d.dat", targetDir, i)}
    f_M3L_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M3L_seg_Seg0_soma_0_v[i].printf(f_M3L_seg_Seg0_soma_0_v[i])
    f_M3L_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M3R


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M3R_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM3R_%d.dat", targetDir, i)}
    f_M3R_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M3R_seg_Seg0_soma_0_v[i].printf(f_M3R_seg_Seg0_soma_0_v[i])
    f_M3R_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M4


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M4_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM4_%d.dat", targetDir, i)}
    f_M4_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M4_seg_Seg0_soma_0_v[i].printf(f_M4_seg_Seg0_soma_0_v[i])
    f_M4_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in M5


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_M5_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sM5_%d.dat", targetDir, i)}
    f_M5_seg_Seg0_soma_0_v[i].wopen(filename)
    v_M5_seg_Seg0_soma_0_v[i].printf(f_M5_seg_Seg0_soma_0_v[i])
    f_M5_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MCL


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_MCL_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sMCL_%d.dat", targetDir, i)}
    f_MCL_seg_Seg0_soma_0_v[i].wopen(filename)
    v_MCL_seg_Seg0_soma_0_v[i].printf(f_MCL_seg_Seg0_soma_0_v[i])
    f_MCL_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MCR


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_MCR_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sMCR_%d.dat", targetDir, i)}
    f_MCR_seg_Seg0_soma_0_v[i].wopen(filename)
    v_MCR_seg_Seg0_soma_0_v[i].printf(f_MCR_seg_Seg0_soma_0_v[i])
    f_MCR_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in MI


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_MI_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sMI_%d.dat", targetDir, i)}
    f_MI_seg_Seg0_soma_0_v[i].wopen(filename)
    v_MI_seg_Seg0_soma_0_v[i].printf(f_MI_seg_Seg0_soma_0_v[i])
    f_MI_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in NSML


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_NSML_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sNSML_%d.dat", targetDir, i)}
    f_NSML_seg_Seg0_soma_0_v[i].wopen(filename)
    v_NSML_seg_Seg0_soma_0_v[i].printf(f_NSML_seg_Seg0_soma_0_v[i])
    f_NSML_seg_Seg0_soma_0_v[i].close()
}


//  Saving VOLTAGE on only one seg, id: 0, in the only cell in NSMR


//  Saving vector for segment: Seg0_soma_0(ID: 0)

for i=0, 0 {
    f_NSMR_seg_Seg0_soma_0_v[i] = new File()
    strdef filename
    {sprint(filename, "%sNSMR_%d.dat", targetDir, i)}
    f_NSMR_seg_Seg0_soma_0_v[i].wopen(filename)
    v_NSMR_seg_Seg0_soma_0_v[i].printf(f_NSMR_seg_Seg0_soma_0_v[i])
    f_NSMR_seg_Seg0_soma_0_v[i].close()
}


{ sprint(timeFilename, "%s%s", targetDir, "time.dat")}
{ f_time.wopen(timeFilename) }
{ v_time.printf(f_time) }
{ f_time.close() }

{savetime = stopsw()}

propsFile = new File()
strdef propsFilename
{sprint(propsFilename, "%ssimulator.props", targetDir)}
{propsFile.wopen(propsFilename)}
{propsFile.printf("#This is a list of properties generated by NEURON during the simulation run\n")}
{propsFile.printf("RealSimulationTime=%g\n", realruntime)}
{propsFile.printf("SimulationSaveTime=%g\n", savetime)}
{propsFile.printf("SimulationSetupTime=%g\n", setuptime)}
{propsFile.printf("NEURONversion=%s\n", nrnversion())}
{propsFile.close()}

print "Data stored in ",savetime, "secs in directory: ", targetDir


//   The hoc will quit after finishing...


quit()











































































































































































